import java.awt.BorderLayout;
import java.awt.Color;
import java.awt.Component;
import java.awt.FlowLayout;
import java.awt.Font;
import java.awt.GridLayout;
import java.awt.event.ActionEvent;
import java.awt.event.ActionListener;
import java.io.BufferedReader;
import java.io.File;
import java.io.FileReader;
import java.io.FileWriter;
import java.io.IOException;
import java.io.PrintWriter;
import java.util.ArrayList;
import java.util.HashMap;
import java.util.HashSet;
import java.util.List;
import java.util.Map;
import java.util.Set;
import java.util.prefs.Preferences;

import javax.swing.AbstractCellEditor;
import javax.swing.BorderFactory;
import javax.swing.JButton;
import javax.swing.JCheckBox;
import javax.swing.JComboBox;
import javax.swing.JDialog;
import javax.swing.JFileChooser;
import javax.swing.JFrame;
import javax.swing.JLabel;
import javax.swing.JOptionPane;
import javax.swing.JPanel;
import javax.swing.JScrollPane;
import javax.swing.JTabbedPane;
import javax.swing.JTable;
import javax.swing.JTextArea;
import javax.swing.SwingConstants;
import javax.swing.SwingUtilities;
import javax.swing.table.DefaultTableCellRenderer;
import javax.swing.table.DefaultTableModel;
import javax.swing.table.JTableHeader;
import javax.swing.table.TableCellEditor;

// JFreeChart imports - moved to top to avoid BeanShell loading issues
import org.jfree.chart.ChartFactory;
import org.jfree.chart.ChartPanel;
import org.jfree.chart.JFreeChart;
import org.jfree.chart.plot.PlotOrientation;
import org.jfree.chart.plot.XYPlot;
import org.jfree.chart.plot.ValueMarker;
import org.jfree.chart.renderer.xy.*;
import org.jfree.data.xy.XYSeries;
import org.jfree.data.xy.XYSeriesCollection;
import java.awt.BasicStroke;

// ImageJ imports - needed for helper functions
import ij.IJ;
import ij.ImagePlus;
import ij.process.ImageProcessor;
import ij.process.ByteProcessor;
import ij.process.ShortProcessor;
import ij.gui.ImageCanvas;
import ij.gui.Overlay;
import ij.gui.Roi;

// ==================== Data Classes ====================

// ROI with spatial metadata
class ROIMetadata {
    ij.gui.Roi roi;
    String sourceRegion;       // "original", "left", "right", "upper", "lower"
    int captureWidth;
    int captureHeight;
    
    public ROIMetadata(ij.gui.Roi roi, String sourceRegion, int width, int height) {
        this.roi = roi;
        this.sourceRegion = sourceRegion;
        this.captureWidth = width;
        this.captureHeight = height;
    }
}

// Spatial processing configuration
class SpatialConfig {
    String splitAxis = "Horizontal";  // "Horizontal" or "Vertical"
    String roiSourceRegion = "Upper";  // "Left", "Right", "Upper", "Lower"
    
    String getRatioDirection1() {
        if (splitAxis.equals("Horizontal")) {
            return roiSourceRegion.equals("Upper") ? "Up/Down" : "Down/Up";
        } else {
            return roiSourceRegion.equals("Left") ? "Left/Right" : "Right/Left";
        }
    }
    
    String getRatioDirection2() {
        if (splitAxis.equals("Horizontal")) {
            return roiSourceRegion.equals("Upper") ? "Down/Up" : "Up/Down";
        } else {
            return roiSourceRegion.equals("Left") ? "Right/Left" : "Left/Right";
        }
    }
}

// Acquisition settings - decoupled from GUI
class AcquisitionSettings {
    boolean livePics = false; // Controls live view GUI display (images are always saved)
    boolean convertToStack = true; // Convert individual TIFFs to stack after acquisition (default: true)
    boolean stackPerRow = false; // Create one stack per sequence row (not yet implemented)
    String saveDirectory = "";
    ArrayList sequenceRows = new ArrayList(); // Each row is ArrayList of column values
    ArrayList visualizationRows = new ArrayList();
    
    // Processing mode
    String processingMode = "Temporal"; // "Temporal" or "Spatial"
    SpatialConfig spatialConfig = new SpatialConfig();
    
    void captureFromGUI(DefaultTableModel tableModel, DefaultTableModel vizTableModel, 
                       JCheckBox simpleSnapModeCheckbox, JCheckBox livePicsCheckbox, 
                       JCheckBox convertToStackCheckbox, JCheckBox stackPerRowCheckbox, String savePath,
                       JComboBox processingModeCombo, JComboBox splitAxisCombo, JComboBox roiSourceCombo) {
        // Capture mode
        config.useSimpleSnapMode = simpleSnapModeCheckbox.isSelected();
        livePics = livePicsCheckbox.isSelected();
        convertToStack = convertToStackCheckbox.isSelected();
        stackPerRow = stackPerRowCheckbox.isSelected();
        saveDirectory = savePath;
        
        // Capture processing mode and spatial config
        processingMode = (String) processingModeCombo.getSelectedItem();
        if (processingMode.equals("Spatial")) {
            spatialConfig.splitAxis = (String) splitAxisCombo.getSelectedItem();
            spatialConfig.roiSourceRegion = (String) roiSourceCombo.getSelectedItem();
        }
        
        // Capture sequence table
        sequenceRows.clear();
        for (int i = 0; i < tableModel.getRowCount(); i++) {
            ArrayList row = new ArrayList();
            for (int j = 0; j < tableModel.getColumnCount(); j++) {
                row.add(tableModel.getValueAt(i, j));
            }
            sequenceRows.add(row);
        }
        
        // Capture visualization table
        visualizationRows.clear();
        for (int i = 0; i < vizTableModel.getRowCount(); i++) {
            ArrayList row = new ArrayList();
            for (int j = 0; j < vizTableModel.getColumnCount(); j++) {
                row.add(vizTableModel.getValueAt(i, j));
            }
            visualizationRows.add(row);
        }
    }
    
    boolean isVisualizationNeeded() {
        for (int i = 0; i < visualizationRows.size(); i++) {
            ArrayList row = visualizationRows.get(i);
            String type = (String) row.get(1);
            if (type != null && !type.trim().isEmpty() && !type.equals("Off")) {
                return true;
            }
        }
        return false;
    }
}

// Global configuration storage
class MicroscopeConfig {
    Map pinToChannel = new HashMap();
    String cameraConfigGroup = "Hamamatsu";
    String cameraSnapConfig = "Snapping_and_Live";
    String cameraTriggerConfig = "GlobalResetLevelTriggerArduinoMode";
    String spectralConfigGroup = "SpectrAmazing";
    String spectralDefaultConfig = "BrightLight";
    String serialPort = "COM4";
    String configFilePath = "";
    
    // Acquisition mode: true = use circular buffer (for real camera), false = simple snap mode (for demo)
    boolean useCircularBuffer = false;  // Default: false for demo camera compatibility
    
    // Simple snap mode: true = use GUI settings only (no channel switching), false = full sequence logic
    boolean useSimpleSnapMode = true;  // Default: true for maximum simplicity
    
    AcquisitionSettings acqSettings = new AcquisitionSettings();
    ArrayList storedROIs = new ArrayList(); // Store ROIs for acquisition
    String experimentFolder = ""; // Store experiment folder path
    String imagesFolder = ""; // Store images subfolder path (for TIFF files)

    // Load configuration from file
    boolean loadFromFile(String filePath) {
        try {
            pinToChannel.clear();
            BufferedReader reader = new BufferedReader(new FileReader(filePath));
            String line;

            while ((line = reader.readLine()) != null) {
                line = line.trim();
                // Skip comments and empty lines
                if (line.startsWith("#") || line.isEmpty()) {
                    continue;
                }

                // Parse key = value
                if (line.contains("=")) {
                    String[] parts = line.split("=", 2);
                    String key = parts[0].trim();
                    String value = parts[1].trim();

                    if (key.startsWith("PIN_")) {
                        try {
                            int pinNum = Integer.parseInt(key.substring(4));
                            pinToChannel.put(pinNum, value);
                        } catch (NumberFormatException e) {
                            print("Warning: Invalid pin number in line: " + line);
                        }
                    } else if (key.equals("CAMERA_CONFIG_GROUP")) {
                        cameraConfigGroup = value;
                    } else if (key.equals("CAMERA_SNAP_CONFIG")) {
                        cameraSnapConfig = value;
                    } else if (key.equals("CAMERA_TRIGGER_CONFIG")) {
                        cameraTriggerConfig = value;
                    } else if (key.equals("USE_CIRCULAR_BUFFER")) {
                        useCircularBuffer = value.equalsIgnoreCase("true") || value.equals("1");
                    } else if (key.equals("SPECTRAL_CONFIG_GROUP")) {
                        spectralConfigGroup = value;
                    } else if (key.equals("SPECTRAL_DEFAULT_CONFIG")) {
                        spectralDefaultConfig = value;
                    } else if (key.equals("SERIAL_PORT")) {
                        serialPort = value;
                    }
                }
            }
            reader.close();
            configFilePath = filePath;
            print("Configuration loaded from: " + filePath);
            return true;
        } catch (IOException e) {
            JOptionPane.showMessageDialog(null, "Error loading config file: " + e.getMessage(),
                    "Config Error", JOptionPane.ERROR_MESSAGE);
            return false;
        }
    }

    // Get list of available channels (excluding Camera on PIN_1)
    List getAvailableChannels() {
        List channels = new ArrayList();
        for (Map.Entry entry : pinToChannel.entrySet()) {
            int pin = (Integer) entry.getKey();
            String channel = (String) entry.getValue();
            if (pin > 1) { // Skip PIN_1 (Camera)
                channels.add(channel);
            }
        }
        return channels;
    }

    // Get pin number for a channel name
    int getPinForChannel(String channelName) {
        for (Map.Entry entry : pinToChannel.entrySet()) {
            if (((String) entry.getValue()).equals(channelName)) {
                return (Integer) entry.getKey();
            }
        }
        return -1;
    }
}

// Simple FileFilter for config files
class ConfigFileFilter extends javax.swing.filechooser.FileFilter {
    public boolean accept(File f) {
        return f.isDirectory() || f.getName().toLowerCase().endsWith(".txt");
    }
    public String getDescription() {
        return "Configuration Files (*.txt)";
    }
}

// Global config instance
config=new MicroscopeConfig();

// Preferences for remembering last config
prefs=Preferences.userNodeForPackage(MicroscopeConfig.class);

// Table Model for the acquisition settings
class AcquisitionTableModel extends DefaultTableModel {

    String[] columnNames = { "Row", "Channel", "Exposure [ms]", "Frame Interval [ms]",
            "Frames", "Loop Goto", "Loop Times", "Constant Illum", "Loop Switch Goto" };
    Set userModifiedLoopGoto = new HashSet(); // Track which rows have user-modified Loop Goto

    public AcquisitionTableModel() {
        super();
        // Only set column identifiers for the data columns (exclude Row)
        String[] dataColumnNames = { "Channel", "Exposure [ms]", "Frame Interval [ms]",
                "Frames", "Loop Goto", "Loop Times", "Constant Illum", "Loop Switch Goto" };
        setColumnIdentifiers(dataColumnNames);
        // Add one default row with upper limits as defaults
        addRow(new Object[] { "", "250", "10000", "10000", "1", "", "", "" });
    }

    public int getColumnCount() {
        return columnNames.length; // Return 9 for UI display
    }

    public String getColumnName(int col) {
        return columnNames[col];
    }

    public Class getColumnClass(int col) {
        return String.class;
    }

    public Object getValueAt(int row, int col) {
        if (col == 0) {
            return String.valueOf(row + 1); // Row numbers are 1-based
        }
        return super.getValueAt(row, col - 1);
    }

    public boolean isCellEditable(int row, int col) {
        return col != 0; // Row number column is not editable
    }

    public void setValueAt(Object value, int row, int col) {
        if (col == 0)
            return; // Can't set row number

        // Track if user manually edits Loop Goto column (col 5)
        if (col == 5) {
            String oldValue = (String) super.getValueAt(row, col - 1);
            String newValue = value.toString();
            // If value changed and it's not empty, mark as user-modified
            if (!newValue.equals(oldValue) && !newValue.isEmpty()) {
                userModifiedLoopGoto.add(row);
            }
        }

        // Validate and clamp numeric fields
        Object correctedValue = value;
        if (col == 2) { // Exposure [ms] - limit 250
            correctedValue = clampValue(value.toString(), 0, 250);
        } else if (col == 3) { // Frame Interval [ms] - limit 10000
            correctedValue = clampValue(value.toString(), 0, 10000);
        } else if (col == 4) { // Frames - limit 10000
            correctedValue = clampValue(value.toString(), 0, 10000);
        } else if (col == 6) { // Loop Times - limit 10000
            correctedValue = clampValue(value.toString(), 0, 10000);
        }

        super.setValueAt(correctedValue, row, col - 1);

        // If Channel column (col 1) changed, update Constant Illum (col 7)
        if (col == 1) {
            updateConstantIllumForRow(row);
        }
    }

    String clampValue(String valueStr, int min, int max) {
        if (valueStr == null || valueStr.trim().isEmpty()) {
            return valueStr;
        }
        try {
            int val = Integer.parseInt(valueStr.trim());
            if (val < min)
                return String.valueOf(min);
            if (val > max)
                return String.valueOf(max);
            return String.valueOf(val);
        } catch (NumberFormatException e) {
            // Return max value if invalid number
            return String.valueOf(max);
        }
    }

    void updateConstantIllumForRow(int row) {
        String channels = (String) super.getValueAt(row, 0);
        String constIllum = (String) super.getValueAt(row, 6);

        if (channels.isEmpty() || constIllum.isEmpty()) {
            return;
        }

        // Parse selected channels
        String[] selectedChannels = channels.split(",");
        Set channelSet = new HashSet();
        for (String ch : selectedChannels) {
            channelSet.add(ch.trim());
        }

        // Parse constant illum and remove conflicts
        String[] constChannels = constIllum.split(",");
        StringBuilder newConstIllum = new StringBuilder();
        for (String ch : constChannels) {
            String trimmed = ch.trim();
            if (!channelSet.contains(trimmed)) {
                if (newConstIllum.length() > 0)
                    newConstIllum.append(",");
                newConstIllum.append(trimmed);
            }
        }

        // Update only if changed
        String newValue = newConstIllum.toString();
        if (!newValue.equals(constIllum)) {
            super.setValueAt(newValue, row, 6);
        }
    }

    void updateLoopGotoDefaults() {
        int rowCount = getRowCount();
        for (int i = 0; i < rowCount; i++) {
            // Only update if not user-modified
            if (!userModifiedLoopGoto.contains(i)) {
                int nextRow = i + 2; // Row numbers are 1-based, and we want next row
                if (nextRow <= rowCount) {
                    super.setValueAt(String.valueOf(nextRow), i, 4); // col 5 in user view, col 4 in storage
                } else {
                    super.setValueAt("1", i, 4); // Last row loops to first
                }
            }
        }
    }

    public void addRow(Object[] rowData) {
        super.addRow(rowData);
        updateLoopGotoDefaults();
    }

    public void removeRow(int row) {
        userModifiedLoopGoto.remove(row);
        // Adjust indices for rows after the removed one
        Set newModified = new HashSet();
        for (Object obj : userModifiedLoopGoto) {
            int idx = (Integer) obj;
            if (idx > row) {
                newModified.add(idx - 1);
            } else {
                newModified.add(idx);
            }
        }
        userModifiedLoopGoto = newModified;

        super.removeRow(row);
        updateLoopGotoDefaults();
    }
}

// Custom cell editor for channel selection with popup dialog
class ChannelEditor extends AbstractCellEditor implements TableCellEditor {

    String currentValue = "";
    JTable parentTable;
    int editingRow;
    int editingColumn;
    List excludedChannels = new ArrayList();

    public ChannelEditor() {
    }

    public Component getTableCellEditorComponent(JTable table, Object value,
            boolean isSelected, int row, int column) {
        parentTable = table;
        editingRow = row;
        editingColumn = column;
        currentValue = value != null ? value.toString() : "";

        // Determine which channels to exclude (for Constant Illum column)
        excludedChannels.clear();
        if (column == 7) { // Constant Illum column (was 6, now 7 with Row column)
            String channelCol = table.getValueAt(row, 1).toString(); // Channel is now column 1
            if (!channelCol.isEmpty()) {
                String[] parts = channelCol.split(",");
                for (String ch : parts) {
                    excludedChannels.add(ch.trim());
                }
            }
        }

        // Show dialog immediately
        SwingUtilities.invokeLater(new Runnable() {
            public void run() {
                showChannelDialog();
            }
        });

        // Return a dummy label (won't be displayed as dialog opens immediately)
        JLabel label = new JLabel(currentValue.isEmpty() ? "none" : currentValue);
        return label;
    }

    void showChannelDialog() {
        JDialog dialog = new JDialog((JFrame) SwingUtilities.getWindowAncestor(parentTable),
                "Select Channels", true);
        dialog.setLayout(new BorderLayout(10, 10));

        // Create checkbox panel with grid layout
        JPanel checkboxPanel = new JPanel(new GridLayout(0, 4, 5, 5));
        checkboxPanel.setBorder(BorderFactory.createEmptyBorder(10, 10, 10, 10));

        List channels = config.getAvailableChannels();
        List checkBoxes = new ArrayList();

        for (String channel : channels) {
            // Skip excluded channels
            if (excludedChannels.contains(channel)) {
                continue;
            }

            JCheckBox box = new JCheckBox(channel);
            box.setSelected(currentValue.contains(channel));
            checkBoxes.add(box);
            checkboxPanel.add(box);
        }

        // Buttons
        JPanel buttonPanel = new JPanel(new FlowLayout(FlowLayout.RIGHT));
        JButton okButton = new JButton("OK");
        JButton cancelButton = new JButton("Cancel");

        okButton.addActionListener(new ActionListener() {
            public void actionPerformed(ActionEvent e) {
                StringBuilder sb = new StringBuilder();
                for (Object obj : checkBoxes) {
                    JCheckBox box = (JCheckBox) obj;
                    if (box.isSelected()) {
                        if (sb.length() > 0)
                            sb.append(",");
                        sb.append(box.getText());
                    }
                }
                currentValue = sb.toString();
                dialog.dispose();
                fireEditingStopped();
            }
        });

        cancelButton.addActionListener(new ActionListener() {
            public void actionPerformed(ActionEvent e) {
                dialog.dispose();
                fireEditingCanceled();
            }
        });

        buttonPanel.add(okButton);
        buttonPanel.add(cancelButton);

        dialog.add(new JScrollPane(checkboxPanel), BorderLayout.CENTER);
        dialog.add(buttonPanel, BorderLayout.SOUTH);
        dialog.pack();
        dialog.setLocationRelativeTo(parentTable);
        dialog.setVisible(true);
    }

    public Object getCellEditorValue() {
        return currentValue;
    }
}

// Custom cell renderer for channel display
class ChannelRenderer extends DefaultTableCellRenderer {
    public Component getTableCellRendererComponent(JTable table, Object value,
            boolean isSelected, boolean hasFocus,
            int row, int column) {
        super.getTableCellRendererComponent(table, value, isSelected, hasFocus, row, column);

        String val = value != null ? value.toString() : "";
        if (val.isEmpty()) {
            setText("none");
            setForeground(Color.GRAY);
        } else {
            String[] channels = val.split(",");
            if (channels.length <= 3) {
                setText(val);
            } else {
                setText(channels[0] + ", " + channels[1] + " +" + (channels.length - 2) + " more");
            }
            setForeground(isSelected ? table.getSelectionForeground() : table.getForeground());
        }

        return this;
    }
}

// Custom cell renderer for Loop Times - shows infinity symbol when empty
class LoopTimesRenderer extends DefaultTableCellRenderer {
    public Component getTableCellRendererComponent(JTable table, Object value,
            boolean isSelected, boolean hasFocus,
            int row, int column) {
        super.getTableCellRendererComponent(table, value, isSelected, hasFocus, row, column);

        String val = value != null ? value.toString() : "";
        if (val.isEmpty() || val.equals("0")) {
            setText("∞");
            setForeground(Color.GRAY);
            setHorizontalAlignment(SwingConstants.CENTER);
        } else {
            setText(val);
            setForeground(isSelected ? table.getSelectionForeground() : table.getForeground());
            setHorizontalAlignment(SwingConstants.RIGHT);
        }

        return this;
    }
}

// Custom cell renderer for Loop Switch Goto - shows "none" when empty
class LoopSwitchGotoRenderer extends DefaultTableCellRenderer {
    public Component getTableCellRendererComponent(JTable table, Object value,
                                                   boolean isSelected, boolean hasFocus,
                                                   int row, int column) {
        super.getTableCellRendererComponent(table, value, isSelected, hasFocus, row, column);
        
        String val = value != null ? value.toString() : "";
        if (val.isEmpty() || val.equalsIgnoreCase("none")) {
            setText("none");
            setForeground(Color.GRAY);
            setHorizontalAlignment(SwingConstants.CENTER);
        } else {
            setText(val);
            setForeground(isSelected ? table.getSelectionForeground() : table.getForeground());
            setHorizontalAlignment(SwingConstants.CENTER);
        }
        
        return this;
    }
}

// ==================== Data Visualization Table Classes ====================

// Table Model for visualization configuration
class VisualizationTableModel extends DefaultTableModel {
    String currentMode = "Temporal";  // Track current processing mode
    String[] temporalColumns = {"Graph", "Type", "every", "every 2nd (odd)", "every 2nd (even)", "Custom"};
    String[] spatialColumns = {"Graph", "Type"};  // Spatial mode: no frame selection columns
    
    public VisualizationTableModel() {
        super(new Object[][]{
            {"1", "none", Boolean.FALSE, Boolean.FALSE, Boolean.FALSE, "Off"},
            {"2", "none", Boolean.FALSE, Boolean.FALSE, Boolean.FALSE, "Off"},
            {"3", "none", Boolean.FALSE, Boolean.FALSE, Boolean.FALSE, "Off"},
            {"4", "none", Boolean.FALSE, Boolean.FALSE, Boolean.FALSE, "Off"}
        }, new String[]{"Graph", "Type", "every", "every 2nd (odd)", "every 2nd (even)", "Custom"});
    }
    
    void setProcessingMode(String mode) {
        this.currentMode = mode;
        if (mode.equals("Temporal")) {
            setColumnIdentifiers(temporalColumns);
        } else {
            setColumnIdentifiers(spatialColumns);
        }
        // Reset all rows
        setRowCount(0);
        for (int i = 1; i <= 4; i++) {
            if (mode.equals("Temporal")) {
                addRow(new Object[]{String.valueOf(i), "none", Boolean.FALSE, Boolean.FALSE, Boolean.FALSE, "Off"});
            } else {
                addRow(new Object[]{String.valueOf(i), "none"});
            }
        }
    }
    
    public Class getColumnClass(int col) {
        if (currentMode.equals("Temporal") && col >= 2 && col <= 4) {
            return Boolean.class;
        }
        return String.class;
    }
    
    public boolean isCellEditable(int row, int col) {
        if (col == 0) return false;
        if (col == 1) return true;
        
        // Spatial mode: only Graph and Type columns exist
        if (currentMode.equals("Spatial")) {
            return false;  // No other columns to edit
        }
        
        // Temporal mode editing logic
        String type = (String) getValueAt(row, 1);
        if (type.equals("none")) return false;
        
        // Frame Ratio and Split ratio types: checkboxes not editable (auto-managed or not applicable)
        if (type.startsWith("Frame ratio") || type.startsWith("Split ratio")) {
            return false;
        }
        
        if (col == 5) return true; // Custom column always editable when type != none
        return true;
    }
    
    public void setValueAt(Object value, int row, int col) {
        if (col == 0) return;
        
        if (col == 1) {
            String newType = (String) value;
            String oldType = (String) super.getValueAt(row, col);
            super.setValueAt(newType, row, col);
            
            // Only handle checkbox columns in Temporal mode
            if (currentMode.equals("Temporal")) {
                if (newType.equals("none")) {
                    for (int i = 2; i <= 4; i++) {
                        super.setValueAt(Boolean.FALSE, row, i);
                    }
                    super.setValueAt("Off", row, 5);
                } else if (newType.startsWith("Frame ratio")) {
                    // Frame Ratio: automatically check both odd and even, uncheck "every" and clear custom
                    super.setValueAt(Boolean.FALSE, row, 2); // every
                    super.setValueAt(Boolean.TRUE, row, 3);  // odd
                    super.setValueAt(Boolean.TRUE, row, 4);  // even
                    super.setValueAt("Off", row, 5);         // custom
                } else if (newType.startsWith("Split ratio")) {
                    // Split Ratio: always processes every frame (spatial processing)
                    super.setValueAt(Boolean.TRUE, row, 2);  // every
                    super.setValueAt(Boolean.FALSE, row, 3); // odd
                    super.setValueAt(Boolean.FALSE, row, 4); // even
                    super.setValueAt("Off", row, 5);         // custom
                } else if (oldType.equals("none")) {
                    for (int i = 2; i <= 4; i++) {
                        super.setValueAt(Boolean.FALSE, row, i);
                    }
                    super.setValueAt("Off", row, 5);
                }
            }
            // Spatial mode: no extra columns to set
            
            fireTableRowsUpdated(row, row);
            return;
        }
        
        if (col >= 2 && col <= 4) {
            String type = (String) super.getValueAt(row, 1);
            if (type.equals("none")) return;
            
            boolean newValue = ((Boolean) value).booleanValue();
            int checkedCount = 0;
            for (int i = 2; i <= 4; i++) {
                if (((Boolean) super.getValueAt(row, i)).booleanValue()) {
                    checkedCount++;
                }
            }
            
            // Check if custom is active
            String customValue = (String) super.getValueAt(row, 5);
            boolean customActive = !customValue.equals("Off");
            
            if (type.equals("Frame ratio")) {
                if (newValue && (checkedCount >= 2 || customActive)) {
                    return;
                }
            } else {
                if (newValue && (checkedCount >= 1 || customActive)) {
                    return;
                }
            }
            
            super.setValueAt(value, row, col);
        }
        
        if (col == 5) {
            String type = (String) super.getValueAt(row, 1);
            if (type.equals("none")) return;
            
            String newValue = (String) value;
            
            // If setting custom to something other than "Off", uncheck all checkboxes
            if (!newValue.equals("Off")) {
                for (int i = 2; i <= 4; i++) {
                    super.setValueAt(Boolean.FALSE, row, i);
                }
            }
            
            super.setValueAt(value, row, col);
        }
    }
}

// Custom cell editor for Type column (dropdown) - mode-aware
class VisualizationTypeEditor extends DefaultCellEditor {
    JComboBox combo;
    String currentMode = "Temporal";
    SpatialConfig spatialConfig = new SpatialConfig();
    
    public VisualizationTypeEditor() {
        super(new JComboBox());
        combo = (JComboBox) getComponent();
        updateOptions();
    }
    
    void setProcessingMode(String mode, SpatialConfig config) {
        this.currentMode = mode;
        this.spatialConfig = config;
        updateOptions();
    }
    
    void updateOptions() {
        combo.removeAllItems();
        combo.addItem("none");
        
        if (currentMode.equals("Temporal")) {
            combo.addItem("Intensity");
            combo.addItem("Frame ratio Even/Odd");
            combo.addItem("Frame ratio Odd/Even");
        } else if (currentMode.equals("Spatial")) {
            // Add split ratio options based on spatial config
            String dir1 = spatialConfig.getRatioDirection1();
            String dir2 = spatialConfig.getRatioDirection2();
            combo.addItem("Split ratio " + dir1);
            combo.addItem("Split ratio " + dir2);
            
            // Add region-specific intensity options
            if (spatialConfig.splitAxis.equals("Horizontal")) {
                combo.addItem("Intensity Up");
                combo.addItem("Intensity Down");
            } else {
                combo.addItem("Intensity Left");
                combo.addItem("Intensity Right");
            }
        }
    }
}

// Custom cell editor for Custom column (dropdown with interval/offset options)
class VisualizationCustomEditor extends DefaultCellEditor {
    public VisualizationCustomEditor() {
        super(new JComboBox(new String[]{
            "Off",
            "every 3rd",
            "every 3rd (offset 1)",
            "every 3rd (offset 2)",
            "every 4th",
            "every 4th (offset 1)",
            "every 4th (offset 2)",
            "every 4th (offset 3)",
            "every 5th",
            "every 10th"
        }));
    }
}

// Custom cell renderer for checkboxes that disables when type is "none"
class VisualizationCheckBoxRenderer extends JCheckBox implements javax.swing.table.TableCellRenderer {
    public VisualizationCheckBoxRenderer() {
        setHorizontalAlignment(SwingConstants.CENTER);
    }
    
    public Component getTableCellRendererComponent(JTable table, Object value,
                                                   boolean isSelected, boolean hasFocus,
                                                   int row, int column) {
        String type = (String) table.getValueAt(row, 1);
        boolean enabled = !type.equals("none");
        
        setEnabled(enabled);
        setSelected(value != null && ((Boolean) value).booleanValue());
        
        if (isSelected) {
            setBackground(table.getSelectionBackground());
            setForeground(table.getSelectionForeground());
        } else {
            setBackground(table.getBackground());
            setForeground(table.getForeground());
        }
        
        return this;
    }
}

// Custom cell editor for checkboxes
class VisualizationCheckBoxEditor extends DefaultCellEditor {
    public VisualizationCheckBoxEditor() {
        super(new JCheckBox());
        JCheckBox checkBox = (JCheckBox) getComponent();
        checkBox.setHorizontalAlignment(SwingConstants.CENTER);
    }
}

// Main GUI
JFrame frame = new JFrame("LUMETRIC - Hardware control");
frame.setDefaultCloseOperation(JFrame.DISPOSE_ON_CLOSE);
frame.setSize(1300, 600);

// Create tabbed pane
JTabbedPane tabbedPane = new JTabbedPane();

// Create checkboxes at higher scope so both buttons can access them
JCheckBox simpleSnapMode = new JCheckBox("Simple Snap Mode", true);
simpleSnapMode.setToolTipText("Enable for single-channel acquisition with GUI settings only (safe & simple)");

JCheckBox livePics = new JCheckBox("Live Pictures");
livePics.setToolTipText("Show live view in GUI during acquisition (images are always saved to disk)");

// Stack conversion checkboxes (mutually exclusive)
JCheckBox convertToStack = new JCheckBox("Convert to Stack", true);
convertToStack.setToolTipText("After acquisition, convert individual TIFFs to a single stack and delete originals");

JCheckBox stackPerRow = new JCheckBox("Stack per Row");
stackPerRow.setToolTipText("Create one stack for each row in the acquisition settings (not yet implemented)");
stackPerRow.setEnabled(false); // Disabled for now

// Make stack checkboxes mutually exclusive
convertToStack.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        if (convertToStack.isSelected()) {
            stackPerRow.setSelected(false);
        }
    }
});

stackPerRow.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        if (stackPerRow.isSelected()) {
            convertToStack.setSelected(false);
        }
    }
});

// ===== SETTINGS TAB =====
JPanel settingsPanel = new JPanel(new BorderLayout(10, 10));
settingsPanel.setBorder(BorderFactory.createEmptyBorder(10, 10, 10, 10));

JPanel configInfoPanel = new JPanel(new GridLayout(0, 2, 5, 5));
configInfoPanel.setBorder(BorderFactory.createTitledBorder("Current Configuration"));

JLabel configFileLabel = new JLabel("Config File: Not loaded");
JLabel cameraGroupLabel = new JLabel("Camera Group: -");
JLabel spectralGroupLabel = new JLabel("Spectral Group: -");
JLabel serialPortLabel = new JLabel("Serial Port: -");
JTextArea channelsTextArea = new JTextArea(5, 40);
channelsTextArea.setEditable(false);
channelsTextArea.setBorder(BorderFactory.createTitledBorder("Available Channels"));

JButton loadConfigButton = new JButton("Load Configuration File");
JButton reloadConfigButton = new JButton("Reload Current Config");

configInfoPanel.add(new JLabel("Config File:"));
configInfoPanel.add(configFileLabel);
configInfoPanel.add(new JLabel("Camera Group:"));
configInfoPanel.add(cameraGroupLabel);
configInfoPanel.add(new JLabel("Spectral Group:"));
configInfoPanel.add(spectralGroupLabel);
configInfoPanel.add(new JLabel("Serial Port:"));
configInfoPanel.add(serialPortLabel);

JPanel configButtonPanel = new JPanel(new FlowLayout(FlowLayout.LEFT));
configButtonPanel.add(loadConfigButton);
configButtonPanel.add(reloadConfigButton);

settingsPanel.add(configInfoPanel, BorderLayout.NORTH);
settingsPanel.add(new JScrollPane(channelsTextArea), BorderLayout.CENTER);
settingsPanel.add(configButtonPanel, BorderLayout.SOUTH);

// ===== SEQUENCE TAB =====
sequencePanel = new JPanel(new BorderLayout());

// Top panel with Simple Snap Mode checkbox
JPanel sequenceTopPanel = new JPanel(new FlowLayout(FlowLayout.LEFT));
sequenceTopPanel.setBorder(BorderFactory.createEmptyBorder(5, 5, 5, 5));
sequenceTopPanel.add(simpleSnapMode);
JLabel simpleSnapInfoLabel = new JLabel(" ← Use for single-channel acquisition with GUI settings (no multi-channel automation)");
simpleSnapInfoLabel.setForeground(Color.DARK_GRAY);
sequenceTopPanel.add(simpleSnapInfoLabel);
sequencePanel.add(sequenceTopPanel, BorderLayout.NORTH);

// Create the table
tableModel = new AcquisitionTableModel();
table = new JTable(tableModel);
channelEditor = new ChannelEditor();
table.setRowHeight(30);

// Make table headers darker and more visible
JTableHeader header = table.getTableHeader();
header.setFont(header.getFont().deriveFont(Font.BOLD, 12f));
header.setForeground(Color.BLACK);

// Set custom renderer for Row column (bold)
table.getColumnModel().getColumn(0).setCellRenderer(new DefaultTableCellRenderer() {
    public Component getTableCellRendererComponent(JTable table, Object value,
                                                   boolean isSelected, boolean hasFocus,
                                                   int row, int column) {
        super.getTableCellRendererComponent(table, value, isSelected, hasFocus, row, column);
        setFont(getFont().deriveFont(Font.BOLD));
        setHorizontalAlignment(SwingConstants.CENTER);
        return this;
    }
});
table.getColumnModel().getColumn(0).setPreferredWidth(50); // Row number

// Set custom editor for channel column
table.getColumnModel().getColumn(1).setCellEditor(channelEditor);
table.getColumnModel().getColumn(1).setCellRenderer(new ChannelRenderer());
table.getColumnModel().getColumn(1).setPreferredWidth(150);

// Set column widths for better visibility
table.getColumnModel().getColumn(2).setPreferredWidth(100); // Exposure
table.getColumnModel().getColumn(3).setPreferredWidth(110); // Frame Interval
table.getColumnModel().getColumn(4).setPreferredWidth(80);  // Frames
table.getColumnModel().getColumn(5).setPreferredWidth(90);  // Loop Goto
table.getColumnModel().getColumn(6).setPreferredWidth(90);  // Loop Times
table.getColumnModel().getColumn(7).setPreferredWidth(150); // Constant Illum
table.getColumnModel().getColumn(8).setPreferredWidth(130); // Loop Switch Goto

// Set custom renderer for Loop Times column (shows infinity symbol)
table.getColumnModel().getColumn(6).setCellRenderer(new LoopTimesRenderer());

// Set custom editor and renderer for constant illum column
table.getColumnModel().getColumn(7).setCellEditor(new ChannelEditor());
table.getColumnModel().getColumn(7).setCellRenderer(new ChannelRenderer());

// Set custom renderer for Loop Switch Goto column (shows "none" when empty)
table.getColumnModel().getColumn(8).setCellRenderer(new LoopSwitchGotoRenderer());

// Add scrollpane for table
JScrollPane scrollPane = new JScrollPane(table);
sequencePanel.add(scrollPane, BorderLayout.CENTER);

// Control panel
JPanel controlPanel = new JPanel(new FlowLayout(FlowLayout.LEFT));

JButton addButton = new JButton("Add Row ✓");
addButton.setBackground(Color.GREEN);
addButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        int nextRow = tableModel.getRowCount() + 1;
        tableModel.addRow(new Object[]{"", "250", "10000", "10000", String.valueOf(nextRow), "", "", ""});
    }
});

JButton removeButton = new JButton("Remove Row");
removeButton.setBackground(Color.ORANGE);
removeButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        int selectedRow = table.getSelectedRow();
        if (selectedRow != -1) {
            tableModel.removeRow(selectedRow);
        } else {
            JOptionPane.showMessageDialog(frame, "Please select a row to remove.");
        }
    }
});

JButton validateButton = new JButton("Validate Sequence");
validateButton.setBackground(Color.CYAN);
validateButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        validateSequence();
    }
});

JButton loadSettingsButton = new JButton("Load Settings");
loadSettingsButton.setBackground(new Color(255, 200, 150)); // Light orange
loadSettingsButton.setToolTipText("Load acquisition settings and visualization settings from CSV file");
loadSettingsButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        loadSettingsFromCSV();
    }
});

JButton saveSettingsButton = new JButton("Save Settings");
saveSettingsButton.setBackground(new Color(150, 255, 150)); // Light green
saveSettingsButton.setToolTipText("Save current acquisition settings and visualization settings to CSV file");
saveSettingsButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        saveSettingsToCSV();
    }
});

JButton okButton = new JButton("OK - Start Acquisition");
okButton.setBackground(Color.GREEN);
okButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        if (validateSequence()) {
            // Ensure save directory is selected BEFORE starting threads
            String lastSavePath = prefs.get("lastSavePath", "");
            if (lastSavePath.isEmpty() || !new File(lastSavePath).exists()) {
                JFileChooser dirChooser = new JFileChooser();
                dirChooser.setDialogTitle("Select Directory for Acquisition Data");
                dirChooser.setFileSelectionMode(JFileChooser.DIRECTORIES_ONLY);
                
                int result = dirChooser.showDialog(frame, "Select Folder");
                if (result != JFileChooser.APPROVE_OPTION) {
                    JOptionPane.showMessageDialog(frame, 
                        "You must select a save directory to start acquisition.", 
                        "Save Directory Required", JOptionPane.WARNING_MESSAGE);
                    return;
                }
                
                File saveDir = dirChooser.getSelectedFile();
                lastSavePath = saveDir.getAbsolutePath();
                prefs.put("lastSavePath", lastSavePath);
                
                // Update the display label
                dataDirPathLabel.setText(lastSavePath);
                dataDirPathLabel.setForeground(Color.BLACK);
            }
            
            // Capture all data from GUI before disposal
            config.acqSettings.captureFromGUI(tableModel, vizTableModel, simpleSnapMode, livePics, convertToStack, stackPerRow, lastSavePath, processingModeCombo, splitAxisCombo, roiSourceCombo);
            
            // Dispose GUI immediately - no more GUI dependencies
            frame.dispose();
            
            // Run acquisition workflow in background thread with captured data
            new Thread(new Runnable() {
                public void run() {
                    try {
                        // Create experiment folder first so all files go there
                        createExperimentFolder();
                        
                        if (config.acqSettings.isVisualizationNeeded()) {
                            print("Visualization needed - setting up ROIs...");
                            if (!setupVisualizationROIs()) {
                                print("ERROR: ROI setup failed");
                                return;
                            }
                        }
                        
                        if (!exportTableToCSV()) {
                            print("ERROR: CSV export failed");
                            return;
                        }
                        
                        printSequenceData();
                        
                        // Create acquisition window on EDT
                        SwingUtilities.invokeLater(new Runnable() {
                            public void run() {
                                createInlineAcquisitionWindow();
                            }
                        });
                    } catch (Exception threadEx) {
                        print("ERROR: Uncaught exception in background thread: " + threadEx.getMessage());
                        threadEx.printStackTrace();
                    }
                }
            }).start();
        }
    }
});

JButton cancelButton = new JButton("Cancel");
cancelButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        frame.dispose();
    }
});

controlPanel.add(addButton);
controlPanel.add(removeButton);
controlPanel.add(validateButton);
controlPanel.add(saveSettingsButton);
controlPanel.add(loadSettingsButton);
controlPanel.add(okButton);
controlPanel.add(cancelButton);

// Data directory panel
JPanel dataDirPanel = new JPanel(new FlowLayout(FlowLayout.LEFT));
JLabel dataDirLabel = new JLabel("Data Directory: ");
dataDirLabel.setFont(dataDirLabel.getFont().deriveFont(Font.BOLD));
JLabel dataDirPathLabel = new JLabel("Not selected");
dataDirPathLabel.setForeground(Color.GRAY);

JButton selectFolderButton = new JButton("Select Folder");
selectFolderButton.setBackground(new Color(200, 220, 255)); // Light blue
selectFolderButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        JFileChooser dirChooser = new JFileChooser();
        dirChooser.setDialogTitle("Select Directory for Acquisition Data");
        dirChooser.setFileSelectionMode(JFileChooser.DIRECTORIES_ONLY);
        
        String lastSavePath = prefs.get("lastSavePath", "");
        if (!lastSavePath.isEmpty() && new File(lastSavePath).exists()) {
            dirChooser.setCurrentDirectory(new File(lastSavePath));
        }
        
        int result = dirChooser.showDialog(frame, "Select Folder");
        if (result == JFileChooser.APPROVE_OPTION) {
            File saveDir = dirChooser.getSelectedFile();
            String newPath = saveDir.getAbsolutePath();
            prefs.put("lastSavePath", newPath);
            dataDirPathLabel.setText(newPath);
            dataDirPathLabel.setForeground(Color.BLACK);
        }
    }
});

dataDirPanel.add(dataDirLabel);
dataDirPanel.add(dataDirPathLabel);
dataDirPanel.add(selectFolderButton);

// Mode panel with stack conversion options
JPanel modePanel = new JPanel(new FlowLayout(FlowLayout.LEFT));
JLabel stackLabel = new JLabel("Post-Acquisition:");
modePanel.add(stackLabel);
modePanel.add(convertToStack);
modePanel.add(stackPerRow);

// Layout sequence tab
JPanel bottomPanel = new JPanel(new BorderLayout());
JPanel topBottomPanel = new JPanel(new BorderLayout());
topBottomPanel.add(dataDirPanel, BorderLayout.NORTH);
topBottomPanel.add(modePanel, BorderLayout.SOUTH);
bottomPanel.add(topBottomPanel, BorderLayout.NORTH);
bottomPanel.add(controlPanel, BorderLayout.SOUTH);
sequencePanel.add(bottomPanel, BorderLayout.SOUTH);

// ==================== Data Visualization Tab ====================
JPanel visualizationPanel = new JPanel(new BorderLayout());
visualizationPanel.setBorder(BorderFactory.createEmptyBorder(10, 10, 10, 10));

// Create visualization table and model
vizTableModel = new VisualizationTableModel();
vizTable = new JTable(vizTableModel);

// Title
JLabel vizTitleLabel = new JLabel("Data Visualization Configuration", SwingConstants.CENTER);
vizTitleLabel.setFont(new Font("SansSerif", Font.BOLD, 16));
JPanel vizTitlePanel = new JPanel(new BorderLayout());
vizTitlePanel.add(vizTitleLabel, BorderLayout.CENTER);
vizTitlePanel.setBorder(BorderFactory.createEmptyBorder(0, 0, 10, 0));

// ===== PROCESSING MODE SELECTION =====
JPanel modePanel = new JPanel();
modePanel.setLayout(new BoxLayout(modePanel, BoxLayout.Y_AXIS));
modePanel.setBorder(BorderFactory.createCompoundBorder(
    BorderFactory.createTitledBorder("Processing Mode"),
    BorderFactory.createEmptyBorder(5, 5, 5, 5)
));

JPanel modeSelectionPanel = new JPanel(new FlowLayout(FlowLayout.LEFT));
JLabel modeLabel = new JLabel("Mode:");
modeLabel.setFont(modeLabel.getFont().deriveFont(Font.BOLD));
JComboBox processingModeCombo = new JComboBox(new String[]{"Temporal", "Spatial"});
processingModeCombo.setPreferredSize(new java.awt.Dimension(120, 25));
modeSelectionPanel.add(modeLabel);
modeSelectionPanel.add(processingModeCombo);

// Spatial configuration panel (initially hidden)
JPanel spatialConfigPanel = new JPanel();
spatialConfigPanel.setLayout(new FlowLayout(FlowLayout.LEFT));
spatialConfigPanel.setBorder(BorderFactory.createTitledBorder("Spatial Configuration"));
spatialConfigPanel.setVisible(false);

JLabel splitAxisLabel = new JLabel("Split Axis:");
JComboBox splitAxisCombo = new JComboBox(new String[]{"Horizontal", "Vertical"});
splitAxisCombo.setPreferredSize(new java.awt.Dimension(120, 25));

JLabel roiSourceLabel = new JLabel("ROI Region:");
JComboBox roiSourceCombo = new JComboBox(new String[]{"Upper", "Lower"});  // Default for Horizontal split
roiSourceCombo.setPreferredSize(new java.awt.Dimension(120, 25));

spatialConfigPanel.add(splitAxisLabel);
spatialConfigPanel.add(splitAxisCombo);
spatialConfigPanel.add(Box.createHorizontalStrut(15));
spatialConfigPanel.add(roiSourceLabel);
spatialConfigPanel.add(roiSourceCombo);

modePanel.add(modeSelectionPanel);
modePanel.add(spatialConfigPanel);

// Mode change listener - clear table and update options
final VisualizationTypeEditor typeEditor = new VisualizationTypeEditor();
processingModeCombo.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        String mode = (String) processingModeCombo.getSelectedItem();
        
        // Show/hide spatial config
        spatialConfigPanel.setVisible(mode.equals("Spatial"));
        
        // Update table model mode (which rebuilds columns)
        vizTableModel.setProcessingMode(mode);
        
        // Update type editor options
        SpatialConfig config = new SpatialConfig();
        config.splitAxis = (String) splitAxisCombo.getSelectedItem();
        config.roiSourceRegion = (String) roiSourceCombo.getSelectedItem();
        typeEditor.setProcessingMode(mode, config);
        vizTable.getColumnModel().getColumn(1).setCellEditor(typeEditor);
        
        // Reconfigure table columns for mode
        if (mode.equals("Temporal")) {
            // Re-add checkbox columns
            for (int i = 2; i < 5; i++) {
                vizTable.getColumnModel().getColumn(i).setCellRenderer(new VisualizationCheckBoxRenderer());
                vizTable.getColumnModel().getColumn(i).setCellEditor(new VisualizationCheckBoxEditor());
                vizTable.getColumnModel().getColumn(i).setPreferredWidth(100);
            }
            vizTable.getColumnModel().getColumn(5).setCellEditor(new VisualizationCustomEditor());
            vizTable.getColumnModel().getColumn(5).setPreferredWidth(150);
        }
        // Spatial mode: only 2 columns, no special renderers needed
        
        vizTableModel.fireTableStructureChanged();
        vizTable.getColumnModel().getColumn(0).setPreferredWidth(80);
        vizTable.getColumnModel().getColumn(1).setPreferredWidth(180);
        
        // Re-apply cell editor after structure change
        vizTable.getColumnModel().getColumn(1).setCellEditor(typeEditor);
    }
});

// Split axis change listener - update ROI source options
splitAxisCombo.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        String axis = (String) splitAxisCombo.getSelectedItem();
        
        // Temporarily remove the action listener to prevent cascading events
        ActionListener[] listeners = roiSourceCombo.getActionListeners();
        for (ActionListener listener : listeners) {
            roiSourceCombo.removeActionListener(listener);
        }
        
        roiSourceCombo.removeAllItems();
        if (axis.equals("Horizontal")) {
            roiSourceCombo.addItem("Upper");
            roiSourceCombo.addItem("Lower");
        } else {
            roiSourceCombo.addItem("Left");
            roiSourceCombo.addItem("Right");
        }
        
        // Restore action listeners
        for (ActionListener listener : listeners) {
            roiSourceCombo.addActionListener(listener);
        }
        
        // Clear all visualization settings when split axis changes
        if (processingModeCombo.getSelectedItem().equals("Spatial")) {
            for (int row = 0; row < vizTableModel.getRowCount(); row++) {
                vizTableModel.setValueAt("none", row, 1);
            }
        }
        
        // Update type editor when spatial config changes
        if (processingModeCombo.getSelectedItem().equals("Spatial")) {
            SpatialConfig config = new SpatialConfig();
            config.splitAxis = axis;
            config.roiSourceRegion = (String) roiSourceCombo.getSelectedItem();
            typeEditor.setProcessingMode("Spatial", config);
            vizTable.getColumnModel().getColumn(1).setCellEditor(typeEditor);
        }
    }
});

// ROI source change listener - update type editor
roiSourceCombo.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        // Update type editor when spatial config changes
        if (processingModeCombo.getSelectedItem().equals("Spatial")) {
            SpatialConfig config = new SpatialConfig();
            config.splitAxis = (String) splitAxisCombo.getSelectedItem();
            config.roiSourceRegion = (String) roiSourceCombo.getSelectedItem();
            typeEditor.setProcessingMode("Spatial", config);
            vizTable.getColumnModel().getColumn(1).setCellEditor(typeEditor);
        }
    }
});

// Instructions
JLabel vizInfoLabel = new JLabel("<html><div style='text-align: center;'>"
        + "<b>Temporal:</b> Compare frames over time (Frame ratio). "
        + "<b>Spatial:</b> Compare regions within same frame (Split ratio).<br>"
        + "<b>Intensity</b> measures raw values in specified region."
        + "</div></html>", SwingConstants.CENTER);
vizInfoLabel.setBorder(BorderFactory.createEmptyBorder(5, 10, 10, 10));

// Set table properties
vizTable.setRowHeight(30);

// Make table headers darker and more visible
JTableHeader vizHeader = vizTable.getTableHeader();
vizHeader.setFont(vizHeader.getFont().deriveFont(Font.BOLD, 12f));
vizHeader.setForeground(Color.BLACK);

// Column 0: Channel (centered, not editable)
vizTable.getColumnModel().getColumn(0).setCellRenderer(new DefaultTableCellRenderer() {
    public Component getTableCellRendererComponent(JTable table, Object value,
                                                   boolean isSelected, boolean hasFocus,
                                                   int row, int column) {
        super.getTableCellRendererComponent(table, value, isSelected, hasFocus, row, column);
        setFont(getFont().deriveFont(Font.BOLD));
        setHorizontalAlignment(SwingConstants.CENTER);
        return this;
    }
});
vizTable.getColumnModel().getColumn(0).setPreferredWidth(80);

// Column 1: Type (dropdown) - use the typeEditor created above
vizTable.getColumnModel().getColumn(1).setCellEditor(typeEditor);
vizTable.getColumnModel().getColumn(1).setPreferredWidth(180);

// Columns 2-4: Frame checkboxes
for (int i = 2; i < 5; i++) {
    vizTable.getColumnModel().getColumn(i).setCellRenderer(new VisualizationCheckBoxRenderer());
    vizTable.getColumnModel().getColumn(i).setCellEditor(new VisualizationCheckBoxEditor());
    vizTable.getColumnModel().getColumn(i).setPreferredWidth(100);
}

// Column 5: Custom (dropdown with interval/offset options)
vizTable.getColumnModel().getColumn(5).setCellEditor(new VisualizationCustomEditor());
vizTable.getColumnModel().getColumn(5).setPreferredWidth(150);

JScrollPane vizScrollPane = new JScrollPane(vizTable);

// Bottom panel with Live Pictures and Start Acquisition button
JPanel vizBottomPanel = new JPanel(new BorderLayout());
JPanel vizModePanel = new JPanel(new FlowLayout(FlowLayout.LEFT));

// Add the Live Pictures checkbox
vizModePanel.add(livePics);

JPanel vizButtonPanel = new JPanel(new FlowLayout(FlowLayout.CENTER));
JButton vizStartButton = new JButton("OK - Start Acquisition");
vizStartButton.setBackground(Color.GREEN);
vizStartButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        // Validate sequence first
        if (validateSequence()) {
            // Ensure save directory is selected BEFORE starting threads
            String lastSavePath = prefs.get("lastSavePath", "");
            if (lastSavePath.isEmpty() || !new File(lastSavePath).exists()) {
                JFileChooser dirChooser = new JFileChooser();
                dirChooser.setDialogTitle("Select Directory for Acquisition Data");
                dirChooser.setFileSelectionMode(JFileChooser.DIRECTORIES_ONLY);
                
                int result = dirChooser.showDialog(frame, "Select Folder");
                if (result != JFileChooser.APPROVE_OPTION) {
                    JOptionPane.showMessageDialog(frame, 
                        "You must select a save directory to start acquisition.", 
                        "Save Directory Required", JOptionPane.WARNING_MESSAGE);
                    return;
                }
                
                File saveDir = dirChooser.getSelectedFile();
                lastSavePath = saveDir.getAbsolutePath();
                prefs.put("lastSavePath", lastSavePath);
                
                // Update the display label
                dataDirPathLabel.setText(lastSavePath);
                dataDirPathLabel.setForeground(Color.BLACK);
            }
            
            // Capture all data from GUI before disposal
            config.acqSettings.captureFromGUI(tableModel, vizTableModel, simpleSnapMode, livePics, convertToStack, stackPerRow, lastSavePath, processingModeCombo, splitAxisCombo, roiSourceCombo);
            
            // Dispose GUI immediately
            frame.dispose();
            
            // Run acquisition workflow in background thread with captured data
            new Thread(new Runnable() {
                public void run() {
                    try {
                        // Create experiment folder first so all files go there
                        createExperimentFolder();
                        
                        if (config.acqSettings.isVisualizationNeeded()) {
                            print("Visualization needed - setting up ROIs...");
                            if (!setupVisualizationROIs()) {
                                print("ERROR: ROI setup failed");
                                return;
                            }
                        }
                        
                        if (!exportTableToCSV()) {
                            print("ERROR: CSV export failed");
                            return;
                        }
                        
                        printSequenceData();
                        
                        // Create acquisition window on EDT
                        SwingUtilities.invokeLater(new Runnable() {
                            public void run() {
                                createInlineAcquisitionWindow();
                            }
                        });
                    } catch (Exception threadEx) {
                        print("ERROR: Uncaught exception in background thread: " + threadEx.getMessage());
                        threadEx.printStackTrace();
                    }
                }
            }).start();
        } else {
            // Switch to Acquisition Settings tab to show errors
            tabbedPane.setSelectedIndex(1);
        }
    }
});
vizButtonPanel.add(vizStartButton);

vizBottomPanel.add(vizModePanel, BorderLayout.WEST);
vizBottomPanel.add(vizButtonPanel, BorderLayout.CENTER);

// Layout visualization panel
JPanel vizTopPanel = new JPanel(new BorderLayout());
vizTopPanel.add(vizTitlePanel, BorderLayout.NORTH);
JPanel centerPanel = new JPanel();
centerPanel.setLayout(new BoxLayout(centerPanel, BoxLayout.Y_AXIS));
centerPanel.add(modePanel);
centerPanel.add(vizInfoLabel);
vizTopPanel.add(centerPanel, BorderLayout.CENTER);

visualizationPanel.add(vizTopPanel, BorderLayout.NORTH);
visualizationPanel.add(vizScrollPane, BorderLayout.CENTER);
visualizationPanel.add(vizBottomPanel, BorderLayout.SOUTH);

// Add tabs
tabbedPane.addTab("Setup Configuration", settingsPanel);
tabbedPane.addTab("Acquisition Settings", sequencePanel);
tabbedPane.addTab("Data Visualization", visualizationPanel);

// Set default tab to Acquisition Settings (middle tab)
tabbedPane.setSelectedIndex(1);

// Layout
frame.setLayout(new BorderLayout());
frame.add(tabbedPane, BorderLayout.CENTER);

// Function to update settings display
void updateSettingsDisplay() {
    if (config.configFilePath.isEmpty()) {
        configFileLabel.setText("Not loaded");
        cameraGroupLabel.setText("-");
        spectralGroupLabel.setText("-");
        serialPortLabel.setText("-");
        channelsTextArea.setText("No configuration loaded.\nPlease load a configuration file.");
    } else {
        configFileLabel.setText(config.configFilePath);
        cameraGroupLabel.setText(config.cameraConfigGroup);
        spectralGroupLabel.setText(config.spectralConfigGroup);
        serialPortLabel.setText(config.serialPort);
        
        StringBuilder channelText = new StringBuilder();
        for (Map.Entry entry : config.pinToChannel.entrySet()) {
            channelText.append("PIN_").append(entry.getKey())
                      .append(" = ").append(entry.getValue()).append("\n");
        }
        channelsTextArea.setText(channelText.toString());
    }
}

// Load config button action
loadConfigButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        JFileChooser fileChooser = new JFileChooser();
        fileChooser.setDialogTitle("Select Configuration File");
        fileChooser.setFileFilter(new ConfigFileFilter());
        
        // Start in the script directory
        String lastPath = prefs.get("lastConfigPath", "");
        if (!lastPath.isEmpty()) {
            fileChooser.setCurrentDirectory(new File(lastPath).getParentFile());
        }
        
        int result = fileChooser.showOpenDialog(frame);
        if (result == JFileChooser.APPROVE_OPTION) {
            File selectedFile = fileChooser.getSelectedFile();
            if (config.loadFromFile(selectedFile.getAbsolutePath())) {
                // Save this path for next time
                prefs.put("lastConfigPath", selectedFile.getAbsolutePath());
                updateSettingsDisplay();
                JOptionPane.showMessageDialog(frame, 
                    "Configuration loaded successfully!\nChannels updated in Sequence tab.", 
                    "Success", JOptionPane.INFORMATION_MESSAGE);
            }
        }
    }
});

// Reload config button action
reloadConfigButton.addActionListener(new ActionListener() {
    public void actionPerformed(ActionEvent e) {
        if (config.configFilePath.isEmpty()) {
            JOptionPane.showMessageDialog(frame, 
                "No configuration file loaded yet.", 
                "Info", JOptionPane.INFORMATION_MESSAGE);
        } else {
            if (config.loadFromFile(config.configFilePath)) {
                updateSettingsDisplay();
                JOptionPane.showMessageDialog(frame, 
                    "Configuration reloaded successfully!", 
                    "Success", JOptionPane.INFORMATION_MESSAGE);
            }
        }
    }
});

// Try to load last used config on startup
String lastConfigPath = prefs.get("lastConfigPath", "");
if (!lastConfigPath.isEmpty() && new File(lastConfigPath).exists()) {
    config.loadFromFile(lastConfigPath);
    updateSettingsDisplay();
    print("Auto-loaded last configuration: " + lastConfigPath);
}

// Initialize data directory display
String savedDataPath = prefs.get("lastSavePath", "");
if (!savedDataPath.isEmpty() && new File(savedDataPath).exists()) {
    dataDirPathLabel.setText(savedDataPath);
    dataDirPathLabel.setForeground(Color.BLACK);
}

frame.setVisible(true);

// Validation function
    boolean validateSequence() {
        // Stop any active cell editing to commit current edits
        if (table.isEditing()) {
            javax.swing.table.TableCellEditor editor = table.getCellEditor();
            if (editor != null) {
                editor.stopCellEditing();
            }
        }
        
        int rowCount = tableModel.getRowCount();
        StringBuilder errors = new StringBuilder();

        for (int i = 0; i < rowCount; i++) {
            // Note: Empty channels are allowed (e.g., for delay rows)

            // Validate numeric fields (should be auto-corrected, but double-check)
            int exposureValue = 0;
            int frameIntervalValue = 0;

            try {
                String exposure = tableModel.getValueAt(i, 2).toString();
                if (!exposure.isEmpty()) {
                    int exp = Integer.parseInt(exposure);
                    exposureValue = exp;
                    if (exp < 0 || exp > 250) {
                        errors.append("Row " + (i + 1) + ": Exposure must be 0-250 ms\n");
                    }
                }
            } catch (NumberFormatException e) {
                errors.append("Row " + (i + 1) + ": Invalid exposure value\n");
            }

            try {
                String frameRate = tableModel.getValueAt(i, 3).toString();
                if (!frameRate.isEmpty()) {
                    int fr = Integer.parseInt(frameRate);
                    frameIntervalValue = fr;
                    if (fr < 0 || fr > 10000) {
                        errors.append("Row " + (i + 1) + ": Frame interval must be 0-10000 ms\n");
                    }
                }
            } catch (NumberFormatException e) {
                errors.append("Row " + (i + 1) + ": Invalid frame interval value\n");
            }

            // Check that exposure time is not greater than frame interval
            if (exposureValue > 0 && frameIntervalValue > 0 && exposureValue > frameIntervalValue) {
                errors.append("Row " + (i + 1) + ": Exposure time (" + exposureValue
                        + " ms) must be less than or equal to Frame Interval (" + frameIntervalValue + " ms)\n");
            }

            try {
                String frames = tableModel.getValueAt(i, 4).toString();
                if (!frames.isEmpty()) {
                    int f = Integer.parseInt(frames);
                    if (f < 0 || f > 10000) {
                        errors.append("Row " + (i + 1) + ": Frames must be 0-10000\n");
                    }
                }
            } catch (NumberFormatException e) {
                errors.append("Row " + (i + 1) + ": Invalid frames value\n");
            }

            // Validate Loop Times
            try {
                String loopTimes = tableModel.getValueAt(i, 6).toString();
                if (!loopTimes.isEmpty()) {
                    int lt = Integer.parseInt(loopTimes);
                    if (lt < 0 || lt > 10000) {
                        errors.append("Row " + (i + 1) + ": Loop Times must be 0-10000\n");
                    }
                }
            } catch (NumberFormatException e) {
                errors.append("Row " + (i + 1) + ": Invalid Loop Times value\n");
            }

            // Validate goto references
            String loopGoto = tableModel.getValueAt(i, 5).toString();
            if (!loopGoto.isEmpty()) {
                try {
                    int gotoRow = Integer.parseInt(loopGoto);
                    if (gotoRow < 1 || gotoRow > rowCount) {
                        errors.append("Row " + (i + 1) + ": Loop Goto references non-existent row " + gotoRow + "\n");
                    }
                } catch (NumberFormatException e) {
                    errors.append("Row " + (i + 1) + ": Invalid Loop Goto value\n");
                }
            }

            String switchGoto = tableModel.getValueAt(i, 8).toString().trim();
            if (!switchGoto.isEmpty() && !switchGoto.equalsIgnoreCase("none")) {
                try {
                    int gotoRow = Integer.parseInt(switchGoto);
                    if (gotoRow < 1 || gotoRow > rowCount) {
                        errors.append(
                                "Row " + (i + 1) + ": Loop Switch Goto references non-existent row " + gotoRow + "\n");
                    }
                } catch (NumberFormatException e) {
                    errors.append("Row " + (i + 1) + ": Invalid Loop Switch Goto value (use row number or 'none')\n");
                }
            }
        }

        if (errors.length() > 0) {
            JOptionPane.showMessageDialog(frame, errors.toString(), "Validation Errors", JOptionPane.ERROR_MESSAGE);
            return false;
        } else {
            JOptionPane.showMessageDialog(frame, "Sequence is valid!", "Success", JOptionPane.INFORMATION_MESSAGE);
            return true;
        }
    }

    // Print sequence data for debugging - uses captured data
    void printSequenceData() {
        print("\n=== Acquisition Settings ===");
        print("Live Pictures: " + config.acqSettings.livePics);
        print("\nSequence Steps:");

        for (int i = 0; i < config.acqSettings.sequenceRows.size(); i++) {
            ArrayList row = config.acqSettings.sequenceRows.get(i);
            print("Step " + (i + 1) + ":");
            print("  Channel: " + row.get(1));
            print("  Exposure: " + row.get(2) + " ms");
            print("  Frame Interval: " + row.get(3) + " ms");
            print("  Frames: " + row.get(4));
            print("  Loop Goto: " + row.get(5));
            print("  Loop Times: " + row.get(6));
            print("  Constant Illum: " + row.get(7));
            print("  Loop Switch Goto: " + row.get(8));
        }
        print("===========================\n");
    }

// ==================== Generic CSV Export Helper ====================

// Write generic CSV data to file
// data: 2D array or List of Lists - each inner list is a row
// headers: Array/List of column headers
// comments: Optional array/list of comment lines (will be prefixed with #)
boolean writeCSV(File csvFile, Object headers, Object data, Object comments) {
    try {
        PrintWriter writer = new PrintWriter(new FileWriter(csvFile));
        
        // Write headers
        if (headers != null) {
            StringBuilder headerRow = new StringBuilder();
            if (headers instanceof Object[]) {
                Object[] headerArray = (Object[]) headers;
                for (int i = 0; i < headerArray.length; i++) {
                    if (i > 0) headerRow.append(",");
                    headerRow.append(escapeCSV(headerArray[i].toString()));
                }
            } else if (headers instanceof List) {
                List headerList = (List) headers;
                for (int i = 0; i < headerList.size(); i++) {
                    if (i > 0) headerRow.append(",");
                    headerRow.append(escapeCSV(headerList.get(i).toString()));
                }
            }
            writer.println(headerRow.toString());
        }
        
        // Write data rows
        if (data != null) {
            if (data instanceof Object[][]) {
                Object[][] dataArray = (Object[][]) data;
                for (int i = 0; i < dataArray.length; i++) {
                    StringBuilder row = new StringBuilder();
                    for (int j = 0; j < dataArray[i].length; j++) {
                        if (j > 0) row.append(",");
                        row.append(escapeCSV(dataArray[i][j].toString()));
                    }
                    writer.println(row.toString());
                }
            } else if (data instanceof List) {
                List dataList = (List) data;
                for (int i = 0; i < dataList.size(); i++) {
                    StringBuilder row = new StringBuilder();
                    Object rowData = dataList.get(i);
                    if (rowData instanceof Object[]) {
                        Object[] rowArray = (Object[]) rowData;
                        for (int j = 0; j < rowArray.length; j++) {
                            if (j > 0) row.append(",");
                            row.append(escapeCSV(rowArray[j].toString()));
                        }
                    } else if (rowData instanceof List) {
                        List rowList = (List) rowData;
                        for (int j = 0; j < rowList.size(); j++) {
                            if (j > 0) row.append(",");
                            row.append(escapeCSV(rowList.get(j).toString()));
                        }
                    }
                    writer.println(row.toString());
                }
            }
        }
        
        // Write comments
        if (comments != null) {
            writer.println("");
            if (comments instanceof Object[]) {
                Object[] commentArray = (Object[]) comments;
                for (int i = 0; i < commentArray.length; i++) {
                    writer.println("# " + commentArray[i].toString());
                }
            } else if (comments instanceof List) {
                List commentList = (List) comments;
                for (int i = 0; i < commentList.size(); i++) {
                    writer.println("# " + commentList.get(i).toString());
                }
            } else if (comments instanceof String) {
                writer.println("# " + comments.toString());
            }
        }
        
        writer.close();
        return true;
        
    } catch (IOException e) {
        print("ERROR: Failed to write CSV file: " + e.getMessage());
        e.printStackTrace();
        return false;
    }
}

// Escape special characters for CSV format
String escapeCSV(String value) {
    if (value == null) return "";
    if (value.contains(",") || value.contains("\"") || value.contains("\n")) {
        return "\"" + value.replace("\"", "\"\"") + "\"";
    }
    return value;
}

// Find next available filename with timestamp
File getNextAvailableFile(File directory, String baseName, String extension) {
    // Use timestamp to avoid having to check existing files
    import java.text.SimpleDateFormat;
    import java.util.Date;
    
    SimpleDateFormat sdf = new SimpleDateFormat("yyyyMMdd_HHmmss");
    String timestamp = sdf.format(new Date());
    File file = new File(directory, baseName + "_" + timestamp + extension);
    
    // If by some chance file exists (same second), add milliseconds
    if (file.exists()) {
        timestamp = sdf.format(new Date()) + "_" + System.currentTimeMillis();
        file = new File(directory, baseName + "_" + timestamp + extension);
    }
    
    return file;
}

// ==================== ROI Setup for Visualization ====================

// Check if any visualization channels are configured - DEPRECATED, use config.acqSettings.isVisualizationNeeded()
boolean isVisualizationNeeded() {
    return config.acqSettings.isVisualizationNeeded();
}

// ==================== Create Experiment Folder ====================
void createExperimentFolder() {
    import java.text.SimpleDateFormat;
    import java.util.Date;
    SimpleDateFormat sdf = new SimpleDateFormat("yyyyMMdd_HHmmss");
    String timestamp = sdf.format(new Date());
    String saveDir = config.acqSettings.saveDirectory;
    
    if (saveDir == null || saveDir.isEmpty()) {
        print("ERROR: No save directory specified!");
        return;
    }
    
    File experimentFolder = new File(saveDir, "Experiment_" + timestamp);
    boolean created = experimentFolder.mkdir();
    
    if (created) {
        print("Created experiment folder: " + experimentFolder.getAbsolutePath());
    } else {
        print("WARNING: Experiment folder may already exist or could not be created: " + experimentFolder.getAbsolutePath());
    }
    
    // Store experiment folder path in config
    config.experimentFolder = experimentFolder.getAbsolutePath();
    print("Experiment folder path set to: " + config.experimentFolder);
    
    // Create images subfolder for TIFF files
    File imagesFolder = new File(experimentFolder, "images");
    boolean imagesFolderCreated = imagesFolder.mkdir();
    if (imagesFolderCreated) {
        print("Created images subfolder: " + imagesFolder.getAbsolutePath());
    } else {
        print("WARNING: Images subfolder could not be created");
    }
    
    // Store images folder path in config
    config.imagesFolder = imagesFolder.getAbsolutePath();
}

// ==================== Setup Visualization ROIs ====================
// Setup ROIs for visualization - returns true if successful, false if cancelled
boolean setupVisualizationROIs() {
    print("========== ROI SETUP START ==========");
    // Note: Main GUI is already disposed at this point
    
    import ij.plugin.frame.RoiManager;
    
    // Snap an image
    print("Snapping image...");
    mmc.setConfig(config.cameraConfigGroup, config.cameraSnapConfig);
    List images = mm.live().snap(false);
    org.micromanager.data.Image image = images.get(0);
    print("Image snapped");
    
    if (images == null || images.isEmpty()) {
        print("ERROR: Failed to snap image");
        return false;
    }
    
    // Create ImageJ display
    ImageProcessor ip = mm.data().ij().createProcessor(image);
    ImagePlus imp = new ImagePlus("ROI Selection - Draw your ROIs", ip);
    imp.show();
    print("Image displayed");
    
    // Open ROI Manager
    IJ.run("ROI Manager...", "");
    ij.plugin.frame.RoiManager rm = ij.plugin.frame.RoiManager.getInstance();
    rm.runCommand(imp, "Show All");
    print("ROI Manager ready");
    
    // Create control window
    final boolean[] done = {false};
    final boolean[] cancelled = {false};
    
    JFrame btnFrame = new JFrame("ROI Setup");
    btnFrame.setSize(400, 150);
    btnFrame.setAlwaysOnTop(true);
    btnFrame.setDefaultCloseOperation(JFrame.DISPOSE_ON_CLOSE);
    
    JPanel infoPanel = new JPanel(new BorderLayout());
    JLabel infoLabel = new JLabel("<html><div style='text-align: center; padding: 10px;'>"
        + "<b>Draw ROIs on the image and add them to ROI Manager</b><br>"
        + "Press 't' to add ROIs, then click Done"
        + "</div></html>", SwingConstants.CENTER);
    infoPanel.add(infoLabel, BorderLayout.CENTER);
    
    JPanel buttonPanel = new JPanel(new FlowLayout(FlowLayout.CENTER, 20, 10));
    JButton doneButton = new JButton("ROIs Done");
    doneButton.setBackground(Color.GREEN);
    JButton cancelButton = new JButton("Cancel");
    cancelButton.setBackground(Color.ORANGE);
    
    doneButton.addActionListener(new ActionListener() {
        public void actionPerformed(ActionEvent e) {
            print("Done button clicked!");
            done[0] = true;
            btnFrame.dispose();
        }
    });
    
    cancelButton.addActionListener(new ActionListener() {
        public void actionPerformed(ActionEvent e) {
            print("Cancel button clicked!");
            cancelled[0] = true;
            btnFrame.dispose();
        }
    });
    
    buttonPanel.add(doneButton);
    buttonPanel.add(cancelButton);
    
    btnFrame.setLayout(new BorderLayout());
    btnFrame.add(infoPanel, BorderLayout.CENTER);
    btnFrame.add(buttonPanel, BorderLayout.SOUTH);
    btnFrame.setLocationRelativeTo(null);
    btnFrame.setVisible(true);
    
    print("Waiting for button click...");
    int count = 0;
    while (done[0] == false && cancelled[0] == false) {
        count++;
        if (count % 10 == 0) {
            print("Still waiting... " + count);
        }
        Thread.sleep(100);
    }
    
    print("Button clicked! done=" + done[0] + ", cancelled=" + cancelled[0]);
    
    if (cancelled[0]) {
        // Clean up ImageJ window
        if (imp.getWindow() != null) {
            imp.getWindow().close();
        }
        print("ROI setup cancelled");
        return false;
    }
    
    print("ROI count = " + rm.getCount());
    
    // Rename ROIs in the ROI Manager immediately
    for (int i = 0; i < rm.getCount(); i++) {
        rm.select(i);
        rm.runCommand("Rename", "ROI" + (i + 1));
    }
    print("ROIs renamed in ROI Manager to ROI1, ROI2, etc.");
    
    // Clean up ImageJ window
    if (imp.getWindow() != null) {
        imp.getWindow().close();
    }
    
    // Store renamed ROIs with metadata
    config.storedROIs = new ArrayList();
    
    // Get current image dimensions
    int imageWidth = (int) mmc.getImageWidth();
    int imageHeight = (int) mmc.getImageHeight();
    
    // Determine source region based on processing mode
    String sourceRegion = "original";
    if (config.acqSettings.processingMode.equals("Spatial")) {
        sourceRegion = config.acqSettings.spatialConfig.roiSourceRegion;
    }
    
    print("Storing ROIs with source region: " + sourceRegion);
    print("Image dimensions: " + imageWidth + " x " + imageHeight);
    
    for (int i = 0; i < rm.getCount(); i++) {
        ij.gui.Roi roi = rm.getRoi(i);
        ROIMetadata roiMeta = new ROIMetadata(roi, sourceRegion, imageWidth, imageHeight);
        config.storedROIs.add(roiMeta);
    }
    print("ROIs renamed to ROI1, ROI2, etc.");
    print("Stored " + config.storedROIs.size() + " ROIs for acquisition");
    
    // Save ROI set with renamed ROIs
    if (rm.getCount() > 0) {
        // Use experiment folder if it exists, otherwise use data directory
        String savePath = config.experimentFolder.isEmpty() ? 
            prefs.get("lastSavePath", "") : config.experimentFolder;
        if (!savePath.isEmpty()) {
            File saveDir = new File(savePath);
            File roiFile = config.experimentFolder.isEmpty() ? 
                getNextAvailableFile(saveDir, "RoiSet", ".zip") : 
                new File(saveDir, "RoiSet.zip");
            print("Saving ROIs to: " + roiFile.getAbsolutePath());
            rm.runCommand("Save", roiFile.getAbsolutePath());
            if (roiFile.exists()) {
                print("SUCCESS: ROI set saved (" + roiFile.length() + " bytes)");
            }
        }
    }
    
    // Close ROI Manager - we have the ROIs stored
    print("Closing ROI Manager...");
    rm.close();
    
    print("========== ROI SETUP COMPLETE ==========");
    return true;
}

    // Export table to CSV with auto-incrementing filename - uses captured data
boolean exportTableToCSV() {
    // Get save directory from captured settings
    String saveDir = config.acqSettings.saveDirectory;
    
    if (saveDir.isEmpty() || !new File(saveDir).exists()) {
        print("ERROR: Save directory not set!");
        return false;
    }
    
    // Use experiment folder if it exists
    File saveDirFile = config.experimentFolder.isEmpty() ? 
        new File(saveDir) : new File(config.experimentFolder);
    
    File csvFileReadable = config.experimentFolder.isEmpty() ? 
        getNextAvailableFile(saveDirFile, "AquisitionSettings", ".csv") :
        new File(saveDirFile, "AquisitionSettings.csv");
    
    String baseName = csvFileReadable.getName().replace(".csv", "");
    File csvFileArduino = new File(saveDirFile, baseName + "_Arduino.csv");
    ArrayList tableData = config.acqSettings.sequenceRows;
    
    try {
        // ===== HUMAN-READABLE VERSION =====
        PrintWriter writerReadable = new PrintWriter(new FileWriter(csvFileReadable));
        writerReadable.println("Channel,Exposure [ms],Frame Interval [ms],Frames,Loop Goto,Loop Times,Constant Illum,Loop Switch Goto");
        for (int i = 0; i < tableData.size(); i++) {
            StringBuilder row = new StringBuilder();
            ArrayList rowData = (ArrayList) tableData.get(i);
            for (int j = 1; j < rowData.size(); j++) { // Skip column 0 (Row number)
                String value = rowData.get(j).toString();
                
                // Format display values
                if (j == 1 && value.isEmpty()) { // Channel
                    value = "none";
                } else if (j == 6 && value.isEmpty()) { // Loop Times
                    value = "always";
                } else if (j == 7 && value.isEmpty()) { // Constant Illum
                    value = "none";
                } else if (j == 8 && value.isEmpty()) { // Loop Switch Goto
                    value = "none";
                }
                
                row.append(escapeCSV(value));
                if (j < rowData.size() - 1) {
                    row.append(",");
                }
            }
            writerReadable.println(row.toString());
        }
        
        // Write mode settings as comments
        writerReadable.println("");
        writerReadable.println("# Live Pictures: " + config.acqSettings.livePics);
        
        // Write visualization settings
        writerReadable.println("");
        writerReadable.println("# Visualization Settings");
        writerReadable.println("Graph,Type,Every Frame,Every Odd,Every Even,Custom");
        for (int i = 0; i < config.acqSettings.visualizationRows.size(); i++) {
            ArrayList vizRow = (ArrayList) config.acqSettings.visualizationRows.get(i);
            StringBuilder vizRowStr = new StringBuilder();
            vizRowStr.append(escapeCSV(vizRow.get(0).toString())); // Graph name
            vizRowStr.append(",");
            vizRowStr.append(escapeCSV(vizRow.get(1).toString())); // Type
            vizRowStr.append(",");
            vizRowStr.append(vizRow.get(2) != null && ((Boolean)vizRow.get(2)).booleanValue() ? "true" : "false"); // Every frame
            vizRowStr.append(",");
            vizRowStr.append(vizRow.get(3) != null && ((Boolean)vizRow.get(3)).booleanValue() ? "true" : "false"); // Every odd
            vizRowStr.append(",");
            vizRowStr.append(vizRow.get(4) != null && ((Boolean)vizRow.get(4)).booleanValue() ? "true" : "false"); // Every even
            vizRowStr.append(",");
            vizRowStr.append(escapeCSV(vizRow.get(5).toString())); // Custom
            writerReadable.println(vizRowStr.toString());
        }
        
        writerReadable.close();
        
        // ===== ARDUINO VERSION =====
        PrintWriter writerArduino = new PrintWriter(new FileWriter(csvFileArduino));
        writerArduino.println("Channel,Exposure [ms],Frame Interval [ms],Frames,Loop Goto,Loop Times,Constant Illum,Loop Switch Goto");
        for (int i = 0; i < tableData.size(); i++) {
            StringBuilder row = new StringBuilder();
            ArrayList rowData = (ArrayList) tableData.get(i);
            for (int j = 1; j < rowData.size(); j++) { // Skip column 0 (Row number)
                String value = rowData.get(j).toString();
                String arduinoValue = value;
                
                // Convert to Arduino format
                if (j == 1) { // Channel
                    if (value.isEmpty()) {
                        // none channel: 1 if Exposure > 0 (camera only), 0 if Exposure = 0
                        String exposureStr = rowData.get(2).toString();
                        try {
                            int exposure = exposureStr.isEmpty() ? 0 : Integer.parseInt(exposureStr);
                            arduinoValue = exposure > 0 ? "1" : "0";
                        } catch (NumberFormatException e) {
                            arduinoValue = "0";
                        }
                    } else {
                        // Convert channel names to binary sum for Arduino
                        // PIN_1 (Camera) = 1, PIN_2 = 2, PIN_3 = 4, PIN_4 = 8, etc.
                        String[] channels = value.split(",");
                        int binarySum = 1; // Camera (PIN_1) is always on
                        for (String ch : channels) {
                            String channelName = ch.trim();
                            int pinNum = config.getPinForChannel(channelName);
                            if (pinNum != -1) {
                                // Calculate power of 2 for this pin
                                binarySum += (1 << (pinNum - 1));
                            }
                        }
                        arduinoValue = String.valueOf(binarySum);
                    }
                } else if (j == 6) { // Loop Times
                    if (value.isEmpty()) {
                        arduinoValue = "0"; // infinity = 0
                    }
                } else if (j == 7) { // Constant Illum
                    if (value.isEmpty()) {
                        arduinoValue = "0"; // none = 0
                    } else {
                        // Convert constant illum channel names to binary sum for Arduino
                        String[] channels = value.split(",");
                        int binarySum = 0; // No camera base for constant illum
                        for (String ch : channels) {
                            String channelName = ch.trim();
                            int pinNum = config.getPinForChannel(channelName);
                            if (pinNum != -1) {
                                // Calculate power of 2 for this pin
                                binarySum += (1 << (pinNum - 1));
                            }
                        }
                        arduinoValue = String.valueOf(binarySum);
                    }
                } else if (j == 8) { // Loop Switch Goto
                    if (value.isEmpty()) {
                        arduinoValue = "0"; // none = 0
                    }
                }
                
                row.append(escapeCSV(arduinoValue));
                if (j < rowData.size() - 1) {
                    row.append(",");
                }
            }
            writerArduino.println(row.toString());
        }
        
        // Write mode settings as comments
        writerArduino.println("");
        writerArduino.println("# Live Pictures: " + config.acqSettings.livePics);
        writerArduino.close();
        
        print("Tables exported to:");
        print("  Readable: " + csvFileReadable.getAbsolutePath());
        print("  Arduino:  " + csvFileArduino.getAbsolutePath());
        return true;
        
    } catch (IOException e) {
        print("ERROR: Failed to export CSV files: " + e.getMessage());
        e.printStackTrace();
        return false;
    }
}

// Load settings from CSV file
void loadSettingsFromCSV() {
    JFileChooser fileChooser = new JFileChooser();
    fileChooser.setDialogTitle("Load Acquisition Settings from CSV");
    fileChooser.setFileSelectionMode(JFileChooser.FILES_ONLY);
    
    // Set initial directory to last save path or Data folder
    String lastPath = prefs.get("lastSavePath", "");
    if (!lastPath.isEmpty() && new File(lastPath).exists()) {
        fileChooser.setCurrentDirectory(new File(lastPath));
    } else {
        // Try Data folder in workspace
        File dataFolder = new File(new File("").getAbsolutePath(), "Data");
        if (dataFolder.exists()) {
            fileChooser.setCurrentDirectory(dataFolder);
        }
    }
    
    int result = fileChooser.showOpenDialog(frame);
    if (result != JFileChooser.APPROVE_OPTION) {
        return;
    }
    
    File csvFile = fileChooser.getSelectedFile();
    
    try {
        BufferedReader reader = new BufferedReader(new FileReader(csvFile));
        String line;
        int lineNum = 0;
        boolean headerSkipped = false;
        boolean inVisualizationSection = false;
        boolean vizHeaderSkipped = false;
        int vizRowIndex = 0;
        String loadedMode = "Temporal"; // Default
        String loadedSplitAxis = "Horizontal";
        String loadedROIRegion = "Upper";
        
        // Clear existing table data
        while (tableModel.getRowCount() > 0) {
            tableModel.removeRow(0);
        }
        
        print("Loading settings from: " + csvFile.getAbsolutePath());
        
        while ((line = reader.readLine()) != null) {
            lineNum++;
            line = line.trim();
            
            // Check for visualization section header
            if (line.equals("# Visualization Settings")) {
                inVisualizationSection = true;
                continue;
            }
            
            // If in visualization section
            if (inVisualizationSection) {
                // Skip visualization header line
                if (!vizHeaderSkipped) {
                    if (line.startsWith("Graph,Type")) {
                        vizHeaderSkipped = true;
                        continue;
                    }
                }
                
                // Skip empty lines and other comments
                if (line.isEmpty() || (line.startsWith("#") && !line.equals("# Visualization Settings"))) {
                    continue;
                }
                
                // Parse visualization row
                String[] vizParts = parseCSVLine(line);
                
                // Mode-aware parsing
                if (loadedMode.equals("Temporal")) {
                    if (vizParts.length >= 6 && vizRowIndex < vizTableModel.getRowCount()) {
                        vizTableModel.setValueAt(vizParts[1], vizRowIndex, 1); // Type
                        vizTableModel.setValueAt(Boolean.valueOf(vizParts[2]), vizRowIndex, 2); // Every frame
                        vizTableModel.setValueAt(Boolean.valueOf(vizParts[3]), vizRowIndex, 3); // Every odd
                        vizTableModel.setValueAt(Boolean.valueOf(vizParts[4]), vizRowIndex, 4); // Every even
                        vizTableModel.setValueAt(vizParts[5], vizRowIndex, 5); // Custom
                        vizRowIndex++;
                    }
                } else {
                    // Spatial mode: only 2 columns
                    if (vizParts.length >= 2 && vizRowIndex < vizTableModel.getRowCount()) {
                        vizTableModel.setValueAt(vizParts[1], vizRowIndex, 1); // Type
                        vizRowIndex++;
                    }
                }
                continue;
            }
            
            // Skip sequence header line
            if (!headerSkipped) {
                headerSkipped = true;
                continue;
            }
            
            // Check for mode settings (comments)
            if (line.startsWith("#")) {
                if (line.contains("Live Pictures:")) {
                    String value = line.substring(line.indexOf(":") + 1).trim();
                    boolean livePicsValue = value.equalsIgnoreCase("true");
                    livePics.setSelected(livePicsValue);
                    print("  Live Pictures: " + livePicsValue);
                } else if (line.contains("Convert to Stack:")) {
                    String value = line.substring(line.indexOf(":") + 1).trim();
                    boolean convertToStackValue = value.equalsIgnoreCase("true");
                    convertToStack.setSelected(convertToStackValue);
                    print("  Convert to Stack: " + convertToStackValue);
                } else if (line.contains("Stack per Row:")) {
                    String value = line.substring(line.indexOf(":") + 1).trim();
                    boolean stackPerRowValue = value.equalsIgnoreCase("true");
                    stackPerRow.setSelected(stackPerRowValue);
                    print("  Stack per Row: " + stackPerRowValue);
                } else if (line.contains("Processing Mode:")) {
                    String value = line.substring(line.indexOf(":") + 1).trim();
                    loadedMode = value;
                    print("  Processing Mode: " + loadedMode);
                } else if (line.contains("Split Axis:")) {
                    String value = line.substring(line.indexOf(":") + 1).trim();
                    loadedSplitAxis = value;
                    print("  Split Axis: " + loadedSplitAxis);
                } else if (line.contains("ROI Region:")) {
                    String value = line.substring(line.indexOf(":") + 1).trim();
                    loadedROIRegion = value;
                    print("  ROI Region: " + loadedROIRegion);
                }
                continue;
            }
            
            // Skip empty lines
            if (line.isEmpty()) {
                continue;
            }
            
            // Parse CSV line
            String[] parts = parseCSVLine(line);
            if (parts.length < 8) {
                print("WARNING: Line " + lineNum + " has only " + parts.length + " columns, skipping");
                continue;
            }
            
            // Convert display values back to internal format
            String channel = parts[0].equals("none") ? "" : parts[0];
            String exposure = parts[1];
            String interval = parts[2];
            String frames = parts[3];
            String loopGoto = parts[4];
            String loopTimes = parts[5].equals("always") ? "" : parts[5];
            String constantIllum = parts[6].equals("none") ? "" : parts[6];
            String loopSwitchGoto = parts[7].equals("none") ? "" : parts[7];
            
            // Add row to table
            tableModel.addRow(new Object[]{
                String.valueOf(tableModel.getRowCount() + 1), // Row number
                channel,
                exposure,
                interval,
                frames,
                loopGoto,
                loopTimes,
                constantIllum,
                loopSwitchGoto
            });
        }
        
        reader.close();
        
        // Apply loaded processing mode settings (must be done after loading to update UI)
        processingModeCombo.setSelectedItem(loadedMode);
        if (loadedMode.equals("Spatial")) {
            splitAxisCombo.setSelectedItem(loadedSplitAxis);
            roiSourceCombo.setSelectedItem(loadedROIRegion);
        }
        
        print("Successfully loaded " + tableModel.getRowCount() + " sequence steps");
        if (vizRowIndex > 0) {
            print("Successfully loaded " + vizRowIndex + " visualization settings");
        }
        JOptionPane.showMessageDialog(frame, 
            "Loaded " + tableModel.getRowCount() + " sequence steps" + 
            (vizRowIndex > 0 ? " and " + vizRowIndex + " graph configurations" : "") +
            " from:\\n" + csvFile.getName(),
            "Settings Loaded", JOptionPane.INFORMATION_MESSAGE);
        
    } catch (Exception e) {
        print("ERROR: Failed to load settings from CSV: " + e.getMessage());
        e.printStackTrace();
        JOptionPane.showMessageDialog(frame, 
            "Failed to load settings:\\n" + e.getMessage(),
            "Load Error", JOptionPane.ERROR_MESSAGE);
    }
}

// Parse a CSV line, handling quoted fields
String[] parseCSVLine(String line) {
    ArrayList fields = new ArrayList();
    StringBuilder currentField = new StringBuilder();
    boolean inQuotes = false;
    
    for (int i = 0; i < line.length(); i++) {
        char c = line.charAt(i);
        
        if (c == '"') {
            inQuotes = !inQuotes;
        } else if (c == ',' && !inQuotes) {
            fields.add(currentField.toString());
            currentField = new StringBuilder();
        } else {
            currentField.append(c);
        }
    }
    fields.add(currentField.toString()); // Add last field
    
    // Convert ArrayList to String array
    String[] result = new String[fields.size()];
    for (int i = 0; i < fields.size(); i++) {
        result[i] = (String) fields.get(i);
    }
    return result;
}

// Save current settings to CSV file
void saveSettingsToCSV() {
    JFileChooser fileChooser = new JFileChooser();
    fileChooser.setDialogTitle("Save Acquisition Settings to CSV");
    fileChooser.setFileSelectionMode(JFileChooser.FILES_ONLY);
    
    // Set initial directory to last save path or Data folder
    String lastPath = prefs.get("lastSavePath", "");
    if (!lastPath.isEmpty() && new File(lastPath).exists()) {
        fileChooser.setCurrentDirectory(new File(lastPath));
    } else {
        File dataFolder = new File(new File("").getAbsolutePath(), "Data");
        if (dataFolder.exists()) {
            fileChooser.setCurrentDirectory(dataFolder);
        }
    }
    
    // Set default filename
    fileChooser.setSelectedFile(new File("Settings.csv"));
    
    int result = fileChooser.showSaveDialog(frame);
    if (result != JFileChooser.APPROVE_OPTION) {
        return;
    }
    
    File csvFile = fileChooser.getSelectedFile();
    
    // Ensure .csv extension
    if (!csvFile.getName().toLowerCase().endsWith(".csv")) {
        csvFile = new File(csvFile.getAbsolutePath() + ".csv");
    }
    
    try {
        PrintWriter writer = new PrintWriter(new FileWriter(csvFile));
        
        // Write sequence settings header
        writer.println("Channel,Exposure [ms],Frame Interval [ms],Frames,Loop Goto,Loop Times,Constant Illum,Loop Switch Goto");
        
        // Write sequence data
        for (int i = 0; i < tableModel.getRowCount(); i++) {
            StringBuilder row = new StringBuilder();
            for (int j = 1; j < tableModel.getColumnCount(); j++) { // Skip column 0 (Row number)
                Object value = tableModel.getValueAt(i, j);
                String valueStr = value != null ? value.toString() : "";
                
                // Format display values
                if (j == 1 && valueStr.isEmpty()) { // Channel
                    valueStr = "none";
                } else if (j == 6 && valueStr.isEmpty()) { // Loop Times
                    valueStr = "always";
                } else if (j == 7 && valueStr.isEmpty()) { // Constant Illum
                    valueStr = "none";
                } else if (j == 8 && valueStr.isEmpty()) { // Loop Switch Goto
                    valueStr = "none";
                }
                
                row.append(escapeCSV(valueStr));
                if (j < tableModel.getColumnCount() - 1) {
                    row.append(",");
                }
            }
            writer.println(row.toString());
        }
        
        // Write mode settings
        writer.println("");
        writer.println("# Live Pictures: " + livePics.isSelected());
        writer.println("# Convert to Stack: " + convertToStack.isSelected());
        writer.println("# Stack per Row: " + stackPerRow.isSelected());
        
        // Write processing mode settings
        String currentMode = (String) processingModeCombo.getSelectedItem();
        writer.println("# Processing Mode: " + currentMode);
        if (currentMode.equals("Spatial")) {
            writer.println("# Split Axis: " + splitAxisCombo.getSelectedItem());
            writer.println("# ROI Region: " + roiSourceCombo.getSelectedItem());
        }
        
        // Write visualization settings
        writer.println("");
        writer.println("# Visualization Settings");
        
        // Mode-aware column headers and data
        if (currentMode.equals("Temporal")) {
            writer.println("Graph,Type,Every Frame,Every Odd,Every Even,Custom");
            for (int i = 0; i < vizTableModel.getRowCount(); i++) {
                StringBuilder vizRow = new StringBuilder();
                vizRow.append(escapeCSV(vizTableModel.getValueAt(i, 0).toString())); // Graph name
                vizRow.append(",");
                vizRow.append(escapeCSV(vizTableModel.getValueAt(i, 1).toString())); // Type
                vizRow.append(",");
                
                Object everyFrame = vizTableModel.getValueAt(i, 2);
                vizRow.append(everyFrame != null && ((Boolean)everyFrame).booleanValue() ? "true" : "false");
                vizRow.append(",");
                
                Object everyOdd = vizTableModel.getValueAt(i, 3);
                vizRow.append(everyOdd != null && ((Boolean)everyOdd).booleanValue() ? "true" : "false");
                vizRow.append(",");
                
                Object everyEven = vizTableModel.getValueAt(i, 4);
                vizRow.append(everyEven != null && ((Boolean)everyEven).booleanValue() ? "true" : "false");
                vizRow.append(",");
                
                vizRow.append(escapeCSV(vizTableModel.getValueAt(i, 5).toString())); // Custom
                writer.println(vizRow.toString());
            }
        } else {
            // Spatial mode: only 2 columns
            writer.println("Graph,Type");
            for (int i = 0; i < vizTableModel.getRowCount(); i++) {
                StringBuilder vizRow = new StringBuilder();
                vizRow.append(escapeCSV(vizTableModel.getValueAt(i, 0).toString())); // Graph name
                vizRow.append(",");
                vizRow.append(escapeCSV(vizTableModel.getValueAt(i, 1).toString())); // Type
                writer.println(vizRow.toString());
            }
        }
        
        writer.close();
        
        print("Settings saved to: " + csvFile.getAbsolutePath());
        JOptionPane.showMessageDialog(frame,
            "Settings saved successfully to:\\n" + csvFile.getName(),
            "Settings Saved", JOptionPane.INFORMATION_MESSAGE);
        
    } catch (Exception e) {
        print("ERROR: Failed to save settings to CSV: " + e.getMessage());
        e.printStackTrace();
        JOptionPane.showMessageDialog(frame,
            "Failed to save settings:\\n" + e.getMessage(),
            "Save Error", JOptionPane.ERROR_MESSAGE);
    }
}

// ==================== Acquisition Control Window ====================

// Create acquisition control window inline (called from EDT)
void createInlineAcquisitionWindow() {
    // All imports moved to top of file to avoid BeanShell loading issues
    
    JFrame acqFrame = new JFrame("LUMETRIC - Acquisition Control");
    acqFrame.setDefaultCloseOperation(JFrame.DISPOSE_ON_CLOSE);
    
    // Adaptive sizing: use 80% of screen width and 70% of screen height
    java.awt.Dimension screenSize = java.awt.Toolkit.getDefaultToolkit().getScreenSize();
    int width = (int)(screenSize.width * 0.8);
    int height = (int)(screenSize.height * 0.7);
    acqFrame.setSize(width, height);
    
    // Center window on screen
    acqFrame.setLocationRelativeTo(null);
    
    acqFrame.setLayout(new BorderLayout());
    
    // Global event tracking
    final long[] acquisitionStartTime = new long[1];
    acquisitionStartTime[0] = System.currentTimeMillis();
    
    // Count active graphs and check for live pics
    int activeGraphs = 0;
    for (int i = 0; i < 4; i++) {
        ArrayList vizRow = (ArrayList) config.acqSettings.visualizationRows.get(i);
        String graphType = (String) vizRow.get(1);
        if (!graphType.equals("none")) {
            activeGraphs++;
        }
    }
    boolean hasLiveView = config.acqSettings.livePics;
    
    print("Layout: " + activeGraphs + " graphs, livePics=" + hasLiveView);
    
    // ===== TOP BUTTON PANEL =====
    JPanel topPanel = new JPanel(new BorderLayout());
    topPanel.setBorder(BorderFactory.createEmptyBorder(5, 10, 5, 10));
    
    // Left side buttons (Event, Loop Switch)
    JPanel leftButtonPanel = new JPanel(new FlowLayout(FlowLayout.LEFT, 5, 0));
    
    final JButton eventButton = new JButton("Event");
    eventButton.setFont(new Font("SansSerif", Font.BOLD, 11));
    eventButton.setBackground(new Color(100, 180, 100));
    eventButton.setPreferredSize(new java.awt.Dimension(130, 28));
    
    JButton loopSwitchButton = new JButton("Loop Switch");
    loopSwitchButton.setFont(new Font("SansSerif", Font.BOLD, 11));
    loopSwitchButton.setBackground(new Color(100, 150, 255));
    loopSwitchButton.setPreferredSize(new java.awt.Dimension(130, 28));
    loopSwitchButton.addActionListener(new ActionListener() {
        public void actionPerformed(ActionEvent e) {
            print("Loop switch triggered");
            // TODO: Implement loop switch
        }
    });
    
    JButton resetAllButton = new JButton("Reset All Zooms");
    resetAllButton.setFont(new Font("SansSerif", Font.BOLD, 11));
    resetAllButton.setBackground(new Color(200, 200, 200));
    resetAllButton.setPreferredSize(new java.awt.Dimension(130, 28));
    resetAllButton.addActionListener(new ActionListener() {
        public void actionPerformed(ActionEvent e) {
            for (int i = 0; i < chartPanels.size(); i++) {
                ChartPanel panel = (ChartPanel) chartPanels.get(i);
                if (panel != null) {
                    panel.restoreAutoBounds();
                }
            }
            print("All zooms reset");
        }
    });
    
    JButton resetXButton = new JButton("Reset X-Axis");
    resetXButton.setFont(new Font("SansSerif", Font.BOLD, 11));
    resetXButton.setBackground(new Color(200, 200, 200));
    resetXButton.setPreferredSize(new java.awt.Dimension(130, 28));
    resetXButton.addActionListener(new ActionListener() {
        public void actionPerformed(ActionEvent e) {
            for (int i = 0; i < chartPanels.size(); i++) {
                ChartPanel panel = (ChartPanel) chartPanels.get(i);
                if (panel != null) {
                    panel.restoreAutoDomainBounds();
                }
            }
            print("X-axis reset");
        }
    });
    
    leftButtonPanel.add(eventButton);
    leftButtonPanel.add(Box.createHorizontalStrut(3));
    leftButtonPanel.add(loopSwitchButton);
    leftButtonPanel.add(Box.createHorizontalStrut(15));
    leftButtonPanel.add(resetAllButton);
    leftButtonPanel.add(Box.createHorizontalStrut(3));
    leftButtonPanel.add(resetXButton);
    
    // Right side button (Quit Acquisition)
    JPanel rightButtonPanel = new JPanel(new FlowLayout(FlowLayout.RIGHT, 5, 0));
    
    JButton quitButton = new JButton("Quit Acquisition");
    quitButton.setFont(new Font("SansSerif", Font.BOLD, 11));
    quitButton.setBackground(Color.RED);
    quitButton.setForeground(Color.BLACK);
    quitButton.setPreferredSize(new java.awt.Dimension(130, 28));
    quitButton.addActionListener(new ActionListener() {
        public void actionPerformed(ActionEvent e) {
            int confirm = JOptionPane.showConfirmDialog(acqFrame,
                "Are you sure you want to quit the acquisition?",
                "Confirm Quit",
                JOptionPane.YES_NO_OPTION,
                JOptionPane.WARNING_MESSAGE);
            if (confirm == JOptionPane.YES_OPTION) {
                print("Acquisition quit by user");
                acqFrame.dispose();
                // TODO: Clean up acquisition resources
            }
        }
    });
    
    rightButtonPanel.add(quitButton);
    
    topPanel.add(leftButtonPanel, BorderLayout.WEST);
    topPanel.add(rightButtonPanel, BorderLayout.EAST);
    
    // ===== MAIN CONTENT: ADAPTIVE LAYOUT =====
    JPanel mainPanel = new JPanel();
    
    // Create charts and collect active ones
    final ArrayList charts = new ArrayList();
    final ArrayList chartPlots = new ArrayList();
    final ArrayList chartPanels = new ArrayList(); // Store chart panels for zoom reset
    final ArrayList datasets = new ArrayList();
    
    for (int i = 0; i < 4; i++) {
        ArrayList vizRow = (ArrayList) config.acqSettings.visualizationRows.get(i);
        String graphName = "Graph " + (i + 1);
        String graphType = (String) vizRow.get(1);
        
        if (graphType.equals("none")) {
            charts.add(null);
            chartPlots.add(null);
            datasets.add(null);
            chartPanels.add(null); // Keep arrays synchronized
            continue;
        }
        
        // Build frame logic string
        String frameLogic = "";
        Boolean everyFrame = (Boolean) vizRow.get(2);
        Boolean everyOdd = (Boolean) vizRow.get(3);
        Boolean everyEven = (Boolean) vizRow.get(4);
        String custom = (String) vizRow.get(5);
        
        if (everyFrame != null && everyFrame.booleanValue()) {
            frameLogic = "every";
        } else if (everyOdd != null && everyOdd.booleanValue()) {
            frameLogic = "odd";
        } else if (everyEven != null && everyEven.booleanValue()) {
            frameLogic = "even";
        } else if (custom != null && !custom.equals("Off")) {
            frameLogic = custom;
        }
        
        // Create dataset with multiple series (one per ROI)
        XYSeriesCollection dataset = new XYSeriesCollection();
        // Add series for each actual ROI (count from stored ROIs)
        int numROIs = config.storedROIs != null ? config.storedROIs.size() : 0;
        for (int roiIdx = 0; roiIdx < numROIs; roiIdx++) {
            XYSeries roiSeries = new XYSeries("ROI" + (roiIdx + 1));
            roiSeries.setNotify(true); // Enable auto-notification
            dataset.addSeries(roiSeries);
        }
        datasets.add(dataset);
        
        // Create chart with frame logic in title
        String yAxisLabel = graphType.equals("Intensity") ? "Intensity [A.U.]" :
                           graphType.equals("Split ratio (horizontal)") ? "Split Ratio" :
                           graphType.startsWith("Frame ratio") ? "Frame Ratio" : "Value";
        
        String chartTitle = graphName + " - " + graphType;
        if (!frameLogic.isEmpty()) {
            chartTitle += " (" + frameLogic + ")";
        }
        
        JFreeChart chart = ChartFactory.createXYLineChart(
            chartTitle,
            "Time (ms)",
            yAxisLabel,
            dataset,
            PlotOrientation.VERTICAL,
            true, false, false  // Enable legend
        );
        
        // Customize appearance
        chart.setBackgroundPaint(Color.WHITE);
        chart.getTitle().setFont(new Font("SansSerif", Font.BOLD, 11)); // Smaller title
        XYPlot plot = chart.getXYPlot();
        plot.setBackgroundPaint(Color.LIGHT_GRAY);
        plot.setDomainGridlinePaint(Color.WHITE);
        plot.setRangeGridlinePaint(Color.WHITE);
        
        // Make lines thicker while preserving default colors
        org.jfree.chart.renderer.xy.XYItemRenderer renderer = plot.getRenderer();
        for (int roiIdx = 0; roiIdx < numROIs; roiIdx++) {
            renderer.setSeriesStroke(roiIdx, new BasicStroke(2.0f));
        }
        
        // Create chart panel and store it
        ChartPanel chartPanel = new ChartPanel(chart);
        chartPanel.setMouseWheelEnabled(true);
        
        charts.add(chart);
        chartPlots.add(plot);
        chartPanels.add(chartPanel); // Store for repaint access
    }
    
    // Event button - adds vertical line markers to all active graphs
    eventButton.addActionListener(new ActionListener() {
        public void actionPerformed(ActionEvent e) {
            long currentTime = System.currentTimeMillis() - acquisitionStartTime[0];
            print("Event triggered at " + currentTime + " ms");
            
            // Store event time
            eventTimes.add(new Long(currentTime));
            
            // Add vertical line marker to all active graphs
            for (int i = 0; i < chartPlots.size(); i++) {
                XYPlot plot = (XYPlot) chartPlots.get(i);
                if (plot != null) {
                    ValueMarker marker = new ValueMarker(currentTime / 1000.0); // Convert ms to seconds
                    marker.setPaint(Color.RED);
                    marker.setStroke(new BasicStroke(2.0f));
                    plot.addDomainMarker(marker);
                    
                    // Repaint the chart panel to make marker immediately visible
                    if (i < chartPanels.size() && chartPanels.get(i) != null) {
                        ChartPanel cp = (ChartPanel) chartPanels.get(i);
                        cp.repaint();
                    }
                }
            }
        }
    });
    
    // ADAPTIVE LAYOUT STRATEGY
    if (!hasLiveView && activeGraphs == 1) {
        // CASE 1: Single graph, no live view - ONE BIG WINDOW
        mainPanel.setLayout(new BorderLayout());
        for (int i = 0; i < chartPanels.size(); i++) {
            if (chartPanels.get(i) != null) {
                mainPanel.add((ChartPanel) chartPanels.get(i), BorderLayout.CENTER);
                break;
            }
        }
        
    } else if (hasLiveView && activeGraphs <= 2) {
        // CASE 2: Live view + up to 2 graphs - SPLIT: Big live, small graphs
        javax.swing.JSplitPane splitPane = new javax.swing.JSplitPane(
            javax.swing.JSplitPane.HORIZONTAL_SPLIT);
        splitPane.setResizeWeight(0.7);
        
        // Live view (left, large) - create panel that will hold ImageCanvas
        final JPanel liveViewPanel = new JPanel(new BorderLayout());
        liveViewPanel.setBorder(BorderFactory.createTitledBorder("Live View"));
        liveViewPanel.setBackground(Color.DARK_GRAY);
        JLabel liveLabel = new JLabel("Waiting for first frame...", SwingConstants.CENTER);
        liveLabel.setForeground(Color.LIGHT_GRAY);
        liveViewPanel.add(liveLabel, BorderLayout.CENTER);
        
        // Graphs (right, small, stacked with resizable dividers)
        ArrayList activeChartPanels = new ArrayList();
        for (int i = 0; i < chartPanels.size(); i++) {
            if (chartPanels.get(i) != null) {
                activeChartPanels.add(chartPanels.get(i));
            }
        }
        
        // Create nested split panes for resizable graphs
        JComponent graphsPanel = null;
        if (activeChartPanels.size() == 1) {
            graphsPanel = (ChartPanel) activeChartPanels.get(0);
        } else if (activeChartPanels.size() == 2) {
            javax.swing.JSplitPane graphSplit = new javax.swing.JSplitPane(
                javax.swing.JSplitPane.VERTICAL_SPLIT,
                (ChartPanel) activeChartPanels.get(0),
                (ChartPanel) activeChartPanels.get(1));
            graphSplit.setResizeWeight(0.5);
            graphsPanel = graphSplit;
        }
        
        splitPane.setLeftComponent(liveViewPanel);
        splitPane.setRightComponent(graphsPanel);
        mainPanel.setLayout(new BorderLayout());
        mainPanel.add(splitPane, BorderLayout.CENTER);
        
    } else if (!hasLiveView && activeGraphs == 3) {
        // CASE 3: 3 graphs, no live - First big, two small
        javax.swing.JSplitPane splitPane = new javax.swing.JSplitPane(
            javax.swing.JSplitPane.HORIZONTAL_SPLIT);
        splitPane.setResizeWeight(0.6);
        
        // Find first active graph (big)
        ChartPanel firstChart = null;
        ArrayList smallCharts = new ArrayList();
        
        for (int i = 0; i < chartPanels.size(); i++) {
            if (chartPanels.get(i) != null) {
                if (firstChart == null) {
                    firstChart = (ChartPanel) chartPanels.get(i);
                } else {
                    smallCharts.add(chartPanels.get(i));
                    if (smallCharts.size() >= 2) break;
                }
            }
        }
        
        // Create split pane for the two small graphs
        javax.swing.JSplitPane smallGraphsSplit = new javax.swing.JSplitPane(
            javax.swing.JSplitPane.VERTICAL_SPLIT,
            (ChartPanel) smallCharts.get(0),
            (ChartPanel) smallCharts.get(1));
        smallGraphsSplit.setResizeWeight(0.5);
        
        splitPane.setLeftComponent(firstChart);
        splitPane.setRightComponent(smallGraphsSplit);
        mainPanel.setLayout(new BorderLayout());
        mainPanel.add(splitPane, BorderLayout.CENTER);
        
    } else {
        // DEFAULT: Split pane with live view (if enabled) and all graphs
        javax.swing.JSplitPane splitPane = new javax.swing.JSplitPane(
            javax.swing.JSplitPane.HORIZONTAL_SPLIT);
        
        if (hasLiveView) {
            splitPane.setResizeWeight(0.6);
            
            final JPanel liveViewPanel = new JPanel(new BorderLayout());
            liveViewPanel.setBorder(BorderFactory.createTitledBorder("Live View"));
            liveViewPanel.setBackground(Color.DARK_GRAY);
            JLabel liveLabel = new JLabel("Waiting for first frame...", SwingConstants.CENTER);
            liveLabel.setForeground(Color.LIGHT_GRAY);
            liveViewPanel.add(liveLabel, BorderLayout.CENTER);
            splitPane.setLeftComponent(liveViewPanel);
        } else {
            splitPane.setResizeWeight(1.0);
        }
        
        // All graphs stacked with resizable dividers
        ArrayList activeChartPanels = new ArrayList();
        for (int i = 0; i < chartPanels.size(); i++) {
            if (chartPanels.get(i) != null) {
                activeChartPanels.add(chartPanels.get(i));
            }
        }
        // All graphs stacked with resizable dividers
        ArrayList activeChartPanels = new ArrayList();
        for (int i = 0; i < chartPanels.size(); i++) {
            if (chartPanels.get(i) != null) {
                activeChartPanels.add(chartPanels.get(i));
            }
        }
        
        // Create nested split panes for resizable graphs
        JComponent graphsPanel = null;
        if (activeChartPanels.size() == 1) {
            graphsPanel = (ChartPanel) activeChartPanels.get(0);
        } else if (activeChartPanels.size() == 2) {
            javax.swing.JSplitPane graphSplit = new javax.swing.JSplitPane(
                javax.swing.JSplitPane.VERTICAL_SPLIT,
                (ChartPanel) activeChartPanels.get(0),
                (ChartPanel) activeChartPanels.get(1));
            graphSplit.setResizeWeight(0.5);
            graphsPanel = graphSplit;
        } else if (activeChartPanels.size() == 3) {
            javax.swing.JSplitPane topSplit = new javax.swing.JSplitPane(
                javax.swing.JSplitPane.VERTICAL_SPLIT,
                (ChartPanel) activeChartPanels.get(0),
                (ChartPanel) activeChartPanels.get(1));
            topSplit.setResizeWeight(0.33);
            javax.swing.JSplitPane mainSplit = new javax.swing.JSplitPane(
                javax.swing.JSplitPane.VERTICAL_SPLIT,
                topSplit,
                (ChartPanel) activeChartPanels.get(2));
            mainSplit.setResizeWeight(0.66);
            graphsPanel = mainSplit;
        } else if (activeChartPanels.size() == 4) {
            javax.swing.JSplitPane topSplit = new javax.swing.JSplitPane(
                javax.swing.JSplitPane.VERTICAL_SPLIT,
                (ChartPanel) activeChartPanels.get(0),
                (ChartPanel) activeChartPanels.get(1));
            topSplit.setResizeWeight(0.5);
            javax.swing.JSplitPane bottomSplit = new javax.swing.JSplitPane(
                javax.swing.JSplitPane.VERTICAL_SPLIT,
                (ChartPanel) activeChartPanels.get(2),
                (ChartPanel) activeChartPanels.get(3));
            bottomSplit.setResizeWeight(0.5);
            javax.swing.JSplitPane mainSplit = new javax.swing.JSplitPane(
                javax.swing.JSplitPane.VERTICAL_SPLIT,
                topSplit,
                bottomSplit);
            mainSplit.setResizeWeight(0.5);
            graphsPanel = mainSplit;
        }
        
        if (hasLiveView) {
            splitPane.setRightComponent(graphsPanel);
        } else {
            splitPane.setLeftComponent(graphsPanel);
        }
        
        mainPanel.setLayout(new BorderLayout());
        mainPanel.add(splitPane, BorderLayout.CENTER);
    }
    
    // Assemble frame
    acqFrame.add(topPanel, BorderLayout.NORTH);
    acqFrame.add(mainPanel, BorderLayout.CENTER);
    
    // Store live view panel reference
    final JPanel[] liveViewPanelRef = new JPanel[1];
    // Find and store the liveViewPanel from the layout
    Component[] components = mainPanel.getComponents();
    for (Component comp : components) {
        if (comp instanceof javax.swing.JSplitPane) {
            javax.swing.JSplitPane sp = (javax.swing.JSplitPane) comp;
            Component left = sp.getLeftComponent();
            if (left instanceof JPanel) {
                JPanel panel = (JPanel) left;
                if (panel.getBorder() instanceof javax.swing.border.TitledBorder) {
                    javax.swing.border.TitledBorder border = (javax.swing.border.TitledBorder) panel.getBorder();
                    if (border.getTitle().equals("Live View")) {
                        liveViewPanelRef[0] = panel;
                        break;
                    }
                }
            }
        }
    }
    
    acqFrame.setVisible(true);
    
    // ChartFactory.createXYLineChart() provides a renderer with lines enabled by default
    // No additional renderer configuration needed!
    
    // Force layout and repaint of all chart panels after window is visible
    SwingUtilities.invokeLater(new Runnable() {
        public void run() {
            for (int i = 0; i < chartPanels.size(); i++) {
                if (chartPanels.get(i) != null) {
                    ChartPanel cp = (ChartPanel) chartPanels.get(i);
                    cp.revalidate();
                    cp.repaint();
                }
            }
        }
    });
    
    print("Window visible, starting acquisition thread...");
    
    // ===== START ACQUISITION THREAD =====
    final boolean[] acquisitionRunning = {true};
    final ArrayList allDataRows = new ArrayList(); // Store rows [timestamp, roi0, roi1, roi2, roi3] for CSV export
    final ArrayList eventTimes = new ArrayList(); // Store event timestamps in ms
    
    // Count active graphs for data structure
    int activeGraphCount = 0;
    for (int i = 0; i < 4; i++) {
        ArrayList vizRow = (ArrayList) config.acqSettings.visualizationRows.get(i);
        String graphType = (String) vizRow.get(1);
        if (!graphType.equals("none")) {
            activeGraphCount++;
        }
    }
    final int numActiveGraphs = activeGraphCount;
    
    // Update Quit button to save data and stop acquisition
    quitButton.removeActionListener(quitButton.getActionListeners()[0]);
    quitButton.addActionListener(new ActionListener() {
        public void actionPerformed(ActionEvent e) {
            int confirm = JOptionPane.showConfirmDialog(acqFrame,
                "Are you sure you want to quit the acquisition?",
                "Confirm Quit",
                JOptionPane.YES_NO_OPTION,
                JOptionPane.WARNING_MESSAGE);
            if (confirm == JOptionPane.YES_OPTION) {
                print("Acquisition quit by user");
                acquisitionRunning[0] = false;
                
                // Export data to CSV - pass visualization rows for naming
                exportGraphDataToCSV(allDataRows, numActiveGraphs, config.acqSettings.visualizationRows);
                exportEventTimesToCSV(eventTimes);
                
                acqFrame.dispose();
            }
        }
    });
    
    // Start acquisition in background thread
    print("Creating acquisition thread...");
    new Thread(new Runnable() {
        public void run() {
            print("Acquisition thread started!");
            try {
                // Choose acquisition mode based on configuration
                if (config.useCircularBuffer) {
                    print("Using circular buffer acquisition mode");
                    runCircularBufferAcquisition(acquisitionRunning, allDataRows, datasets, acquisitionStartTime[0], liveViewPanelRef[0], charts, chartPanels);
                } else {
                    print("Using simple snap acquisition mode");
                    runAcquisition(acquisitionRunning, allDataRows, datasets, acquisitionStartTime[0], liveViewPanelRef[0], charts, chartPanels);
                }
            } catch (Exception ex) {
                print("ERROR in acquisition thread: " + ex.getMessage());
                ex.printStackTrace();
            }
        }
    }).start();
    print("Acquisition thread launched.");
}

// ==================== Frame Filtering Logic ====================
boolean shouldProcessFrame(int frameNumber, ArrayList vizRow) {
    Boolean everyFrame = (Boolean) vizRow.get(2);
    if (everyFrame != null && everyFrame.booleanValue()) {
        return true;
    }
    
    Boolean everyOdd = (Boolean) vizRow.get(3);
    Boolean everyEven = (Boolean) vizRow.get(4);
    
    // Special case: if BOTH odd and even are checked (Frame Ratio graphs), accept all frames
    boolean oddChecked = (everyOdd != null && everyOdd.booleanValue());
    boolean evenChecked = (everyEven != null && everyEven.booleanValue());
    
    if (oddChecked && evenChecked) {
        return true; // Accept both odd and even frames for Frame Ratio
    }
    
    // Normal case: check individually
    if (oddChecked) {
        return (frameNumber % 2 == 1);
    }
    
    if (evenChecked) {
        return (frameNumber % 2 == 0);
    }
    
    String custom = (String) vizRow.get(5);
    if (custom != null && !custom.equals("Off")) {
        // Parse custom patterns like "every 3rd", "every 4th (offset 1)", etc.
        if (custom.startsWith("every ")) {
            String[] parts = custom.split(" ");
            if (parts.length >= 2) {
                String numStr = parts[1].replace("rd", "").replace("th", "").replace("nd", "").replace("st", "");
                try {
                    int interval = Integer.parseInt(numStr);
                    int offset = 0;
                    
                    // Check for offset
                    if (custom.contains("offset")) {
                        String offsetStr = custom.substring(custom.indexOf("offset") + 7).trim();
                        offsetStr = offsetStr.replace(")", "").trim();
                        offset = Integer.parseInt(offsetStr);
                    }
                    
                    return ((frameNumber - offset) % interval == 0) && (frameNumber >= offset);
                } catch (NumberFormatException e) {
                    print("WARNING: Could not parse custom pattern: " + custom);
                }
            }
        }
    }
    
    return false;
}

// ==================== COMMON ACQUISITION HELPER FUNCTIONS ====================

// Frame cache for ratio calculations - stores most recent even and odd frames per graph
// Structure: Map<graphIdx, Map<"even"|"odd", CachedFrame>>
// CachedFrame: [frameNumber, timestamp, roiValues]
Map frameCache = new HashMap();

// Initialize frame cache for a graph
void initializeFrameCache(int graphIdx) {
    Map graphCache = new HashMap();
    graphCache.put("even", null);
    graphCache.put("odd", null);
    frameCache.put(graphIdx, graphCache);
}

// Cache frame data for ratio calculation
void cacheFrameData(int graphIdx, int frameNumber, long timestamp, ArrayList roiValues) {
    if (!frameCache.containsKey(graphIdx)) {
        initializeFrameCache(graphIdx);
    }
    
    Map graphCache = (Map) frameCache.get(graphIdx);
    String frameType = (frameNumber % 2 == 0) ? "even" : "odd";
    
    ArrayList cachedFrame = new ArrayList();
    cachedFrame.add(frameNumber);
    cachedFrame.add(timestamp);
    cachedFrame.add(new ArrayList(roiValues)); // Copy the values
    
    graphCache.put(frameType, cachedFrame);
}

// Calculate frame ratio: divides numerator by denominator element-wise
// Returns ArrayList of ratio values (one per ROI)
ArrayList calculateFrameRatio(ArrayList numeratorROIs, ArrayList denominatorROIs) {
    ArrayList ratios = new ArrayList();
    
    if (numeratorROIs == null || denominatorROIs == null) {
        return ratios; // Return empty if either is null
    }
    
    int numROIs = Math.min(numeratorROIs.size(), denominatorROIs.size());
    for (int i = 0; i < numROIs; i++) {
        double numerator = ((Double) numeratorROIs.get(i)).doubleValue();
        double denominator = ((Double) denominatorROIs.get(i)).doubleValue();
        
        // Avoid division by zero
        if (denominator == 0.0) {
            ratios.add(Double.NaN); // Use NaN for undefined ratios
        } else {
            ratios.add(numerator / denominator);
        }
    }
    
    return ratios;
}

// Update live view with image and ROI overlays
void updateLiveView(JPanel liveViewPanel, ImageProcessor ip, ArrayList chartsList) {
    if (liveViewPanel == null || ip == null) {
        return;
    }
    
    final ImageProcessor ipCopy = ip.duplicate();
    SwingUtilities.invokeLater(new Runnable() {
        public void run() {
            try {
                ImagePlus imp = new ImagePlus("Live", ipCopy);
                
                // Scale and display - calculate scale first
                int panelWidth = liveViewPanel.getWidth();
                int panelHeight = liveViewPanel.getHeight();
                
                double scale = 1.0;
                if (panelWidth > 0 && panelHeight > 0) {
                    double scaleX = (double) panelWidth / imp.getWidth();
                    double scaleY = (double) panelHeight / imp.getHeight();
                    scale = Math.min(scaleX, scaleY);
                    scale = Math.max(0.1, Math.min(scale, 4.0));
                }
                
                // Add ROI overlays using colors from the first active chart
                if (config.storedROIs != null && config.storedROIs.size() > 0) {
                    ij.gui.Overlay overlay = new ij.gui.Overlay();
                    
                    // Get renderer from first active chart to match colors
                    org.jfree.chart.renderer.xy.XYItemRenderer renderer = null;
                    if (chartsList != null) {
                        for (int i = 0; i < chartsList.size(); i++) {
                            if (chartsList.get(i) != null) {
                                XYPlot plot = ((JFreeChart) chartsList.get(i)).getXYPlot();
                                renderer = plot.getRenderer();
                                break;
                            }
                        }
                    }
                    
                    for (int roiIdx = 0; roiIdx < config.storedROIs.size(); roiIdx++) {
                        ij.gui.Roi roi = (ij.gui.Roi) config.storedROIs.get(roiIdx);
                        ij.gui.Roi roiCopy = (ij.gui.Roi) roi.clone();
                        
                        // Scale ROI coordinates to match scaled display
                        java.awt.Rectangle bounds = roiCopy.getBounds();
                        int scaledX = (int)(bounds.x * scale);
                        int scaledY = (int)(bounds.y * scale);
                        int scaledW = (int)(bounds.width * scale);
                        int scaledH = (int)(bounds.height * scale);
                        
                        // Create new ROI with scaled coordinates
                        ij.gui.Roi scaledRoi = new ij.gui.Roi(scaledX, scaledY, scaledW, scaledH);
                        // Use color from chart renderer if available, otherwise use default
                        if (renderer != null) {
                            java.awt.Paint paint = renderer.getSeriesPaint(roiIdx);
                            if (paint instanceof java.awt.Color) {
                                scaledRoi.setStrokeColor((java.awt.Color) paint);
                            }
                        }
                        scaledRoi.setStrokeWidth(1.0);
                        overlay.add(scaledRoi);
                    }
                    imp.setOverlay(overlay);
                }
                
                if (panelWidth > 0 && panelHeight > 0) {
                    
                    ij.gui.ImageCanvas canvas = new ij.gui.ImageCanvas(imp);
                    canvas.setMagnification(scale);
                    canvas.setSize((int)(imp.getWidth() * scale), (int)(imp.getHeight() * scale));
                    
                    liveViewPanel.removeAll();
                    JPanel centerPanel = new JPanel(new FlowLayout(FlowLayout.CENTER, 0, 0));
                    centerPanel.setBackground(Color.DARK_GRAY);
                    centerPanel.add(canvas);
                    liveViewPanel.add(centerPanel, BorderLayout.CENTER);
                    liveViewPanel.revalidate();
                    liveViewPanel.repaint();
                }
            } catch (Exception e) {
                print("ERROR updating live view: " + e.getMessage());
            }
        }
    });
}

// Measure all ROIs on an image
ArrayList measureROIs(ImageProcessor ip) {
    ArrayList roiValues = new ArrayList();
    for (int roiIdx = 0; roiIdx < config.storedROIs.size(); roiIdx++) {
        ij.gui.Roi roi = (ij.gui.Roi) config.storedROIs.get(roiIdx);
        ip.setRoi(roi);
        double meanIntensity = ip.getStatistics().mean;
        roiValues.add(meanIntensity);
    }
    return roiValues;
}

// Build data row for CSV export
ArrayList buildDataRow(int frameNumber, long timestamp, ArrayList roiValues) {
    ArrayList dataRow = new ArrayList();
    dataRow.add(frameNumber);
    dataRow.add(timestamp);
    for (int i = 0; i < roiValues.size(); i++) {
        dataRow.add(roiValues.get(i));
    }
    while (dataRow.size() < 6) {  // Pad to 6 columns
        dataRow.add(null);
    }
    return dataRow;
}

// Update all graphs with new data
void updateGraphs(ArrayList datasets, int frameNumber, long currentTime, ArrayList roiValues, ArrayList chartPanels) {
    for (int graphIdx = 0; graphIdx < 4; graphIdx++) {
        ArrayList vizRow = (ArrayList) config.acqSettings.visualizationRows.get(graphIdx);
        String graphType = (String) vizRow.get(1);
        
        if (graphType.equals("none") || datasets.get(graphIdx) == null) {
            continue;
        }
        
        if (!shouldProcessFrame(frameNumber, vizRow)) {
            continue;
        }
        
        // Handle Intensity graphs
        if (graphType.equals("Intensity")) {
            final int gIdx = graphIdx;
            final long time = currentTime;
            final ArrayList roiValsCopy = new ArrayList(roiValues);
            final ArrayList chartPanelsCopy = chartPanels;
            
            SwingUtilities.invokeLater(new Runnable() {
                public void run() {
                    XYSeriesCollection dataset = (XYSeriesCollection) datasets.get(gIdx);
                    for (int roiIdx = 0; roiIdx < roiValsCopy.size(); roiIdx++) {
                        XYSeries series = dataset.getSeries(roiIdx);
                        double value = ((Double) roiValsCopy.get(roiIdx)).doubleValue();
                        series.add(time / 1000.0, value, true);
                    }
                    if (chartPanelsCopy != null && gIdx < chartPanelsCopy.size() && chartPanelsCopy.get(gIdx) != null) {
                        ChartPanel cp = (ChartPanel) chartPanelsCopy.get(gIdx);
                        cp.revalidate();
                        cp.repaint();
                    }
                }
            });
        }
        // Handle Frame Ratio graphs
        else if (graphType.startsWith("Frame ratio")) {
            // Cache the current frame data
            cacheFrameData(graphIdx, frameNumber, currentTime, roiValues);
            
            // Check if we have both even and odd frames cached
            if (!frameCache.containsKey(graphIdx)) {
                continue;
            }
            
            Map graphCache = (Map) frameCache.get(graphIdx);
            ArrayList evenFrame = (ArrayList) graphCache.get("even");
            ArrayList oddFrame = (ArrayList) graphCache.get("odd");
            
            // Need both frames to calculate ratio
            if (evenFrame == null || oddFrame == null) {
                continue;
            }
            
            // Extract ROI values from cached frames
            ArrayList evenROIs = (ArrayList) evenFrame.get(2);
            ArrayList oddROIs = (ArrayList) oddFrame.get(2);
            
            // Calculate ratio based on type
            ArrayList ratioValues = null;
            if (graphType.equals("Frame ratio Even/Odd")) {
                ratioValues = calculateFrameRatio(evenROIs, oddROIs); // even / odd
            } else if (graphType.equals("Frame ratio Odd/Even")) {
                ratioValues = calculateFrameRatio(oddROIs, evenROIs); // odd / even
            }
            
            if (ratioValues == null || ratioValues.isEmpty()) {
                continue;
            }
            
            // Debug output every 10 ratio calculations
            if (frameNumber % 20 == 1) {  // After every 10 pairs (every 20 frames, starting at frame 1)
                print("Frame " + frameNumber + " - Ratio calculated for Graph " + (graphIdx + 1) + ": " + ratioValues);
            }
            
            // Use the timestamp from the more recent frame (the one we just processed)
            long ratioTimestamp = ((Long) (frameNumber % 2 == 0 ? evenFrame.get(1) : oddFrame.get(1))).longValue();
            
            final int gIdx = graphIdx;
            final long time = ratioTimestamp;
            final ArrayList ratioValsCopy = new ArrayList(ratioValues);
            final ArrayList chartPanelsCopy = chartPanels;
            
            SwingUtilities.invokeLater(new Runnable() {
                public void run() {
                    XYSeriesCollection dataset = (XYSeriesCollection) datasets.get(gIdx);
                    for (int roiIdx = 0; roiIdx < ratioValsCopy.size(); roiIdx++) {
                        XYSeries series = dataset.getSeries(roiIdx);
                        Object ratioObj = ratioValsCopy.get(roiIdx);
                        if (ratioObj != null && ratioObj instanceof Double) {
                            double value = ((Double) ratioObj).doubleValue();
                            if (!Double.isNaN(value) && !Double.isInfinite(value)) {
                                series.add(time / 1000.0, value, true);
                            }
                        }
                    }
                    if (chartPanelsCopy != null && gIdx < chartPanelsCopy.size() && chartPanelsCopy.get(gIdx) != null) {
                        ChartPanel cp = (ChartPanel) chartPanelsCopy.get(gIdx);
                        cp.revalidate();
                        cp.repaint();
                    }
                }
            });
        }
    }
}

// Convert TaggedImage to ImageProcessor
ImageProcessor taggedImageToProcessor(Object taggedImg) {
    try {
        int width = (int) mmc.getImageWidth();
        int height = (int) mmc.getImageHeight();
        int bpp = (int) mmc.getBytesPerPixel();
        
        Object pixels = null;
        if (taggedImg.getClass().getName().contains("TaggedImage")) {
            java.lang.reflect.Field pixField = taggedImg.getClass().getField("pix");
            pixels = pixField.get(taggedImg);
        }
        
        if (bpp == 1 && pixels instanceof byte[]) {
            ij.process.ByteProcessor ip = new ij.process.ByteProcessor(width, height);
            ip.setPixels((byte[]) pixels);
            return ip;
        } else if (bpp == 2 && pixels instanceof short[]) {
            ij.process.ShortProcessor ip = new ij.process.ShortProcessor(width, height);
            ip.setPixels((short[]) pixels);
            return ip;
        }
    } catch (Exception e) {
        print("WARNING: Could not convert image: " + e.getMessage());
    }
    return null;
}

// ==================== Circular Buffer Setup ====================
void setupCircularBuffer() {
    print("========== CIRCULAR BUFFER SETUP ==========");
    
    // Calculate memory allocation
    long maxMem = Runtime.getRuntime().maxMemory();
    long bufferMem = (long)(maxMem * 0.75);
    int bufferSizeMB = (int)(bufferMem / (1024 * 1024));
    
    try {
        mmc.setCircularBufferMemoryFootprint(bufferSizeMB);
        
        // Calculate approximate buffer capacity in frames
        int imageWidth = (int) mmc.getImageWidth();
        int imageHeight = (int) mmc.getImageHeight();
        int bytesPerPixel = (int) mmc.getBytesPerPixel();
        long bytesPerImage = imageWidth * imageHeight * bytesPerPixel;
        int approxCapacity = (int)(bufferMem / bytesPerImage);
        
        print("Buffer size: " + bufferSizeMB + " MB");
        print("Image dimensions: " + imageWidth + " x " + imageHeight);
        print("Bytes per pixel: " + bytesPerPixel);
        print("Approximate capacity: " + approxCapacity + " frames");
        print("==========================================");
        
    } catch (Exception e) {
        print("ERROR: Failed to setup circular buffer: " + e.getMessage());
        e.printStackTrace();
    }
}

// ==================== Save Image as TIFF ====================
void saveImageAsTiff(Object img, int frameNumber, String experimentFolder) {
    try {
        // Handle both TaggedImage and MM Image types
        ImageProcessor ip = null;
        
        if (img instanceof org.micromanager.data.Image) {
            // MM2.0 Image
            ip = mm.data().ij().createProcessor((org.micromanager.data.Image) img);
        } else if (img != null) {
            // Try to extract pixel data directly from TaggedImage
            try {
                // Get image dimensions
                int width = (int) mmc.getImageWidth();
                int height = (int) mmc.getImageHeight();
                int bytesPerPixel = (int) mmc.getBytesPerPixel();
                
                // Extract pixel array
                Object pixels = null;
                if (img.getClass().getName().contains("TaggedImage")) {
                    // Use reflection to get pix field
                    java.lang.reflect.Field pixField = img.getClass().getField("pix");
                    pixels = pixField.get(img);
                }
                
                // Create appropriate processor based on bit depth
                if (bytesPerPixel == 1 && pixels instanceof byte[]) {
                    ip = new ByteProcessor(width, height);
                    ip.setPixels((byte[]) pixels);
                } else if (bytesPerPixel == 2 && pixels instanceof short[]) {
                    ip = new ShortProcessor(width, height);
                    ip.setPixels((short[]) pixels);
                }
            } catch (Exception e) {
                print("WARNING: Could not extract pixels from TaggedImage: " + e.getMessage());
            }
        }
        
        if (ip == null) {
            print("WARNING: Could not create ImageProcessor for frame " + frameNumber);
            return;
        }
        
        // Create ImagePlus and save
        ImagePlus imp = new ImagePlus("Frame_" + frameNumber, ip);
        
        // Avoid String.format() - use manual padding instead (BeanShell compatibility)
        String paddedNumber = "" + frameNumber;
        while (paddedNumber.length() < 5) {
            paddedNumber = "0" + paddedNumber;
        }
        String filename = "Frame_" + paddedNumber + ".tif";
        // Save to images subfolder if it exists, otherwise to experiment folder
        String saveFolder = (config.imagesFolder != null && !config.imagesFolder.isEmpty()) ? 
            config.imagesFolder : experimentFolder;
        String filepath = saveFolder + File.separator + filename;
        
        // Use FileSaver instead of IJ.saveAs to avoid any GUI interactions
        ij.io.FileSaver fs = new ij.io.FileSaver(imp);
        boolean success = fs.saveAsTiff(filepath);
        if (!success) {
            print("WARNING: Failed to save frame " + frameNumber);
        }
        
        // Log every 100 frames
        if (frameNumber % 100 == 0) {
            print("Saved frame " + frameNumber + " to disk");
        }
        
    } catch (Exception e) {
        print("ERROR saving frame " + frameNumber + ": " + e.getClass().getName() + ": " + e.getMessage());
        e.printStackTrace();
    }
}

// ==================== Convert TIFFs to Stack ====================
void convertTiffsToStack(String experimentFolder) {
    import ij.ImageStack;
    import ij.io.FileSaver;
    
    print("\n========== CONVERTING TIFFS TO STACK ==========");
    
    try {
        File expFolder = new File(experimentFolder);
        if (!expFolder.exists() || !expFolder.isDirectory()) {
            print("ERROR: Experiment folder does not exist: " + experimentFolder);
            return;
        }
        
        // Check for images subfolder first
        File imagesFolder = new File(expFolder, "images");
        File searchFolder = imagesFolder.exists() ? imagesFolder : expFolder;
        
        print("Searching for TIFF files in: " + searchFolder.getAbsolutePath());
        
        // Find all Frame_*.tif files
        File[] tiffFiles = searchFolder.listFiles(new java.io.FilenameFilter() {
            public boolean accept(File dir, String name) {
                return name.startsWith("Frame_") && name.endsWith(".tif");
            }
        });
        
        if (tiffFiles == null || tiffFiles.length == 0) {
            print("No TIFF files found to convert");
            return;
        }
        
        // Sort files by name to ensure correct order
        java.util.Arrays.sort(tiffFiles);
        
        int numFrames = tiffFiles.length;
        print("Found " + numFrames + " TIFF files");
        
        // Calculate actual total file size
        long totalFileSize = 0;
        for (int i = 0; i < tiffFiles.length; i++) {
            totalFileSize += tiffFiles[i].length();
        }
        long totalFileSizeMB = totalFileSize / (1024 * 1024);
        print("Total file size on disk: " + totalFileSizeMB + " MB");
        
        // Load first image to get dimensions (for logging)
        ImagePlus firstImp = IJ.openImage(tiffFiles[0].getAbsolutePath());
        if (firstImp == null) {
            print("ERROR: Could not open first TIFF file");
            return;
        }
        
        int width = firstImp.getWidth();
        int height = firstImp.getHeight();
        int bitDepth = firstImp.getBitDepth();
        
        print("Image dimensions: " + width + "x" + height + ", " + bitDepth + "-bit");
        
        // Estimate memory requirement based on actual file size
        // Add 20% overhead for ImageStack structure and temporary objects during loading
        long requiredMemoryBytes = (long)(totalFileSize * 1.2);
        long requiredMemoryMB = requiredMemoryBytes / (1024 * 1024);
        print("Estimated memory required: " + requiredMemoryMB + " MB (file size + 20% overhead)");
        
        // Check available memory
        Runtime runtime = Runtime.getRuntime();
        runtime.gc(); // Suggest garbage collection before checking memory
        
        long maxMemory = runtime.maxMemory(); // Maximum memory the JVM will attempt to use
        long allocatedMemory = runtime.totalMemory(); // Current memory allocated to JVM
        long freeMemory = runtime.freeMemory(); // Free memory within allocated memory
        long availableMemory = maxMemory - allocatedMemory + freeMemory; // Total available
        
        long availableMB = availableMemory / (1024 * 1024);
        long maxMB = maxMemory / (1024 * 1024);
        
        print("JVM Memory Status:");
        print("  Max memory: " + maxMB + " MB");
        print("  Available memory: " + availableMB + " MB");
        
        // Use 60% of available memory as safety margin
        // (need extra space for overhead, intermediate objects, etc.)
        long safeAvailableBytes = (long)(availableMemory * 0.6);
        long safeAvailableMB = safeAvailableBytes / (1024 * 1024);
        
        print("  Safe usable memory (60%): " + safeAvailableMB + " MB");
        
        // Check if we have enough memory
        if (requiredMemoryBytes > safeAvailableBytes) {
            print("WARNING: Insufficient memory to create stack");
            print("  Required: " + requiredMemoryMB + " MB");
            print("  Available (safe): " + safeAvailableMB + " MB");
            print("Keeping individual TIFF files");
            
            // Show error popup on EDT
            final long reqMB = requiredMemoryMB;
            final long safeMB = safeAvailableMB;
            SwingUtilities.invokeLater(new Runnable() {
                public void run() {
                    JOptionPane.showMessageDialog(null,
                        "Insufficient memory to create stack.\n\n" +
                        "Required: " + reqMB + " MB\n" +
                        "Available: " + safeMB + " MB (60% safety margin)\n\n" +
                        "Individual TIFF files have been kept in:\n" + experimentFolder,
                        "Stack Conversion - Insufficient Memory",
                        JOptionPane.WARNING_MESSAGE);
                }
            });
            return;
        }
        
        print("Memory check passed - proceeding with stack creation");
        
        // Create stack
        ImageStack stack = new ImageStack(width, height);
        
        print("Loading " + numFrames + " frames into stack...");
        for (int i = 0; i < tiffFiles.length; i++) {
            ImagePlus imp = IJ.openImage(tiffFiles[i].getAbsolutePath());
            if (imp == null) {
                print("WARNING: Could not load frame " + (i+1) + ", skipping");
                continue;
            }
            stack.addSlice("Frame_" + (i+1), imp.getProcessor());
            
            // Progress update every 100 frames
            if ((i+1) % 100 == 0 || i == tiffFiles.length - 1) {
                print("Loaded " + (i+1) + "/" + numFrames + " frames");
            }
        }
        
        // Create ImagePlus from stack
        ImagePlus stackImp = new ImagePlus("Stack", stack);
        
        // Save stack to experiment folder (not images subfolder)
        String stackPath = experimentFolder + File.separator + "Image_Stack.tif";
        print("Saving stack to: " + stackPath);
        
        FileSaver fs = new FileSaver(stackImp);
        boolean success = fs.saveAsTiffStack(stackPath);
        
        if (!success) {
            print("ERROR: Failed to save stack");
            print("Keeping individual TIFF files");
            return;
        }
        
        print("Stack saved successfully");
        
        // Delete individual TIFF files
        print("Deleting individual TIFF files...");
        int deletedCount = 0;
        for (int i = 0; i < tiffFiles.length; i++) {
            if (tiffFiles[i].delete()) {
                deletedCount++;
            } else {
                print("WARNING: Could not delete " + tiffFiles[i].getName());
            }
        }
        
        print("Deleted " + deletedCount + "/" + numFrames + " individual files");
        
        // Remove images subfolder if it's empty
        File imagesFolder = new File(expFolder, "images");
        if (imagesFolder.exists() && imagesFolder.isDirectory()) {
            File[] remainingFiles = imagesFolder.listFiles();
            if (remainingFiles == null || remainingFiles.length == 0) {
                if (imagesFolder.delete()) {
                    print("Removed empty images subfolder");
                } else {
                    print("WARNING: Could not remove images subfolder");
                }
            }
        }
        
        print("========== STACK CONVERSION COMPLETE ==========\n");
        
    } catch (Exception e) {
        print("ERROR during stack conversion: " + e.getClass().getName() + ": " + e.getMessage());
        e.printStackTrace();
        print("Keeping individual TIFF files");
        
        SwingUtilities.invokeLater(new Runnable() {
            public void run() {
                JOptionPane.showMessageDialog(null,
                    "Error during stack conversion:\n" + e.getMessage() + "\n\n" +
                    "Individual TIFF files have been kept.",
                    "Stack Conversion Error",
                    JOptionPane.ERROR_MESSAGE);
            }
        });
    }
}

// ==================== Main Acquisition Loop (Circular Buffer) ====================
void runCircularBufferAcquisition(boolean[] running, ArrayList dataRows, ArrayList datasets, long startTime, JPanel liveViewPanel, ArrayList chartsList, ArrayList chartPanels) {
    print("========== CIRCULAR BUFFER ACQUISITION START ==========");
    
    // Verify experiment folder exists
    if (config.experimentFolder == null || config.experimentFolder.isEmpty()) {
        print("ERROR: No experiment folder set! Cannot save images.");
        return;
    }
    
    File expFolder = new File(config.experimentFolder);
    if (!expFolder.exists()) {
        print("ERROR: Experiment folder does not exist: " + config.experimentFolder);
        return;
    }
    
    if (!expFolder.canWrite()) {
        print("ERROR: Cannot write to experiment folder: " + config.experimentFolder);
        return;
    }
    
    print("Images will be saved to: " + config.experimentFolder);
    
    // Get stored ROIs from config
    if (config.storedROIs == null || config.storedROIs.isEmpty()) {
        print("ERROR: No ROIs stored!");
        return;
    }
    print("Using " + config.storedROIs.size() + " stored ROIs");
    
    // Setup circular buffer
    setupCircularBuffer();
    
    // Calculate approximate buffer capacity for monitoring
    long maxMem = Runtime.getRuntime().maxMemory();
    long bufferMem = (long)(maxMem * 0.75);
    int imageWidth = (int) mmc.getImageWidth();
    int imageHeight = (int) mmc.getImageHeight();
    int bytesPerPixel = (int) mmc.getBytesPerPixel();
    long bytesPerImage = imageWidth * imageHeight * bytesPerPixel;
    int approxCapacity = (int)(bufferMem / bytesPerImage);
    
    // Set camera to triggered mode
    try {
        mmc.setConfig(config.cameraConfigGroup, config.cameraTriggerConfig);
        Thread.sleep(100); // Allow config to settle
        print("Camera set to trigger mode: " + config.cameraTriggerConfig);
    } catch (Exception e) {
        print("ERROR: Failed to set camera config: " + e.getMessage());
        return;
    }
    
    // For demo camera, we'll use a large frame count
    // In real usage, this would be set based on experiment duration
    int numFrames = 10000; // Adjust as needed
    boolean stopOnOverflow = false; // Continuous mode
    
    try {
        print("Starting sequence acquisition...");
        print("Number of frames: " + numFrames);
        print("Stop on overflow: " + stopOnOverflow);
        mmc.startSequenceAcquisition(numFrames, 0, stopOnOverflow);
        print("Acquisition started!");
    } catch (Exception e) {
        print("ERROR: Failed to start sequence acquisition: " + e.getMessage());
        e.printStackTrace();
        return;
    }
    
    // Monitoring variables
    int maxBufferDepth = 0;
    long lastWarningTime = 0;
    int framesProcessed = 0;
    boolean overflowDetected = false;
    long lastGuiUpdateTime = 0;
    final long GUI_UPDATE_INTERVAL_MS = 250;
    
    // Trigger timeout detection
    long lastFrameTime = System.currentTimeMillis();
    long noFrameWarningTime = 0;
    final long NO_FRAME_WARNING_INTERVAL = 5000; // Warn every 5 seconds if no frames
    boolean noFrameWarningShown = false;
    
    // Main acquisition loop
    while (running[0] && (mmc.isSequenceRunning() || mmc.getRemainingImageCount() > 0)) {
        try {
            int remaining = (int) mmc.getRemainingImageCount();
            
            // Track maximum buffer depth
            if (remaining > maxBufferDepth) {
                maxBufferDepth = remaining;
            }
            
            // Warning levels
            double bufferUsage = approxCapacity > 0 ? (double)remaining / approxCapacity : 0;
            
            if (bufferUsage > 0.90) {
                long currentTime = System.currentTimeMillis();
                if (currentTime - lastWarningTime > 5000) {
                    print("CRITICAL: Buffer at " + (int)(bufferUsage * 100) + "% (" + remaining + "/" + approxCapacity + " frames)");
                    print("Processing rate may be too slow!");
                    lastWarningTime = currentTime;
                }
            } else if (bufferUsage > 0.75) {
                long currentTime = System.currentTimeMillis();
                if (currentTime - lastWarningTime > 10000) {
                    print("WARNING: Buffer at " + (int)(bufferUsage * 100) + "% (" + remaining + "/" + approxCapacity + " frames)");
                    lastWarningTime = currentTime;
                }
            }
            
            // Check for overflow
            if (mmc.isBufferOverflowed()) {
                if (!overflowDetected) {
                    print("!!! BUFFER OVERFLOW DETECTED !!!");
                    print("Frames were lost at frame ~" + framesProcessed);
                    print("Buffer depth at overflow: " + remaining + " frames");
                    overflowDetected = true;
                }
            }
            
            // Pop and process images
            if (remaining > 0) {
                // Pop next image from buffer
                Object taggedImg = mmc.popNextTaggedImage();
                
                if (taggedImg != null) {
                    framesProcessed++;
                    long currentTime = System.currentTimeMillis() - startTime;
                    boolean shouldUpdateGui = (currentTime - lastGuiUpdateTime) >= GUI_UPDATE_INTERVAL_MS;
                    
                    // Reset frame timeout
                    lastFrameTime = System.currentTimeMillis();
                    noFrameWarningShown = false;
                    
                    // Convert TaggedImage to ImageProcessor
                    ImageProcessor ip = null;
                    try {
                        // Extract pixel data
                        int width = (int) mmc.getImageWidth();
                        int height = (int) mmc.getImageHeight();
                        int bpp = (int) mmc.getBytesPerPixel();
                        
                        Object pixels = null;
                        if (taggedImg.getClass().getName().contains("TaggedImage")) {
                            java.lang.reflect.Field pixField = taggedImg.getClass().getField("pix");
                            pixels = pixField.get(taggedImg);
                        }
                        
                        if (bpp == 1 && pixels instanceof byte[]) {
                            ip = new ij.process.ByteProcessor(width, height);
                            ip.setPixels((byte[]) pixels);
                        } else if (bpp == 2 && pixels instanceof short[]) {
                            ip = new ij.process.ShortProcessor(width, height);
                            ip.setPixels((short[]) pixels);
                        }
                    } catch (Exception e) {
                        print("WARNING: Could not convert image: " + e.getMessage());
                    }
                    
                    if (ip != null) {
                        // Save image to disk (always)
                        saveImageAsTiff(taggedImg, framesProcessed, config.experimentFolder);
                        
                        // Update live view (throttled, controlled by Live Pictures checkbox)
                        if (shouldUpdateGui && config.acqSettings.livePics) {
                            updateLiveView(liveViewPanel, ip, chartsList);
                        }
                        
                        // Measure ALL ROIs
                        ArrayList roiValues = measureROIs(ip);
                        
                        // Only print every 10th frame to reduce output
                        if (framesProcessed % 10 == 0) {
                            for (int roiIdx = 0; roiIdx < roiValues.size(); roiIdx++) {
                                print("ROI" + (roiIdx + 1) + " [Frame " + framesProcessed + "]: " + roiValues.get(roiIdx));
                            }
                        }
                        
                        // Build data row and store for CSV export
                        ArrayList dataRow = buildDataRow(framesProcessed, currentTime, roiValues);
                        dataRows.add(dataRow);
                        
                        // Update graphs (throttled)
                        if (shouldUpdateGui) {
                            updateGraphs(datasets, framesProcessed, currentTime, roiValues, chartPanels);
                            lastGuiUpdateTime = currentTime;
                        }
                        
                        // Progress update
                        if (framesProcessed % 100 == 0) {
                            print("Processed: " + framesProcessed + " frames, Buffer: " + remaining);
                        }
                    }
                }
            } else {
                // No frames available - check if we're stuck waiting for triggers
                long currentTime = System.currentTimeMillis();
                long timeSinceLastFrame = currentTime - lastFrameTime;
                
                if (timeSinceLastFrame > NO_FRAME_WARNING_INTERVAL && 
                    currentTime - noFrameWarningTime > NO_FRAME_WARNING_INTERVAL) {
                    
                    if (!noFrameWarningShown) {
                        print("\n!!! WARNING: No frames received for " + (timeSinceLastFrame / 1000) + " seconds !!!");
                        print("Circular buffer acquisition is waiting for HARDWARE TRIGGERS.");
                        print("Possible causes:");
                        print("  1. Using DEMO CAMERA - Set USE_CIRCULAR_BUFFER = false in config");
                        print("  2. Arduino not connected or not sending triggers");
                        print("  3. Camera trigger mode not configured correctly");
                        print("TIP: Press 'Quit' button to stop acquisition.\n");
                        noFrameWarningShown = true;
                    }
                    noFrameWarningTime = currentTime;
                }
                
                Thread.sleep(2); // Small delay to prevent busy-waiting
            }
            
        } catch (InterruptedException ie) {
            print("Acquisition interrupted");
            break;
        } catch (Exception e) {
            print("ERROR in acquisition loop: " + e.getMessage());
            e.printStackTrace();
        }
    }
    
    // Stop acquisition if still running
    try {
        if (mmc.isSequenceRunning()) {
            print("Stopping sequence acquisition...");
            mmc.stopSequenceAcquisition();
        }
    } catch (Exception e) {
        print("ERROR stopping acquisition: " + e.getMessage());
    }
    
    // Final report
    print("\n========== ACQUISITION COMPLETE ==========");
    print("Total frames processed: " + framesProcessed);
    print("Maximum buffer depth: " + maxBufferDepth + " frames");
    if (approxCapacity > 0) {
        print("Peak buffer usage: " + (int)((double)maxBufferDepth / approxCapacity * 100) + "%");
    }
    if (overflowDetected) {
        print("WARNING: Buffer overflow occurred during acquisition!");
    } else {
        print("No buffer overflows detected.");
    }
    print("==========================================");
    
    // Convert to stack if requested
    if (config.acqSettings.convertToStack) {
        convertTiffsToStack(config.experimentFolder);
    }
}

// ==================== Main Acquisition Loop (Snap Mode with Full Sequence Logic) ====================
void runAcquisition(boolean[] running, ArrayList dataRows, ArrayList datasets, long startTime, JPanel liveViewPanel, ArrayList chartsList, ArrayList chartPanels) {
    print("========== ACQUISITION START ==========");
    
    // Verify experiment folder exists
    if (config.experimentFolder == null || config.experimentFolder.isEmpty()) {
        print("ERROR: No experiment folder set! Cannot save images.");
        return;
    }
    
    // Get stored ROIs from config (no need for visible ROI Manager)
    if (config.storedROIs == null || config.storedROIs.isEmpty()) {
        print("ERROR: No ROIs stored!");
        return;
    }
    print("Using " + config.storedROIs.size() + " stored ROIs");
    
    // Parse acquisition settings from table
    ArrayList sequence = config.acqSettings.sequenceRows;
    if (sequence == null || sequence.isEmpty()) {
        print("ERROR: No acquisition settings defined!");
        return;
    }
    
    print("Executing " + sequence.size() + " step sequence");
    
    // Check if Simple Snap Mode is enabled
    if (config.useSimpleSnapMode) {
        print("*** SIMPLE SNAP MODE ENABLED ***");
        print("Using current MM GUI settings (no channel switching)");
        print("Processing first sequence row only for timing parameters");
        
        // Get timing parameters from first row only
        ArrayList firstRow = (ArrayList) sequence.get(0);
        
        // Debug: print what we have
        print("\nDEBUG: First row size = " + firstRow.size());
        for (int i = 0; i < firstRow.size(); i++) {
            Object val = firstRow.get(i);
            print("  Column " + i + ": '" + val + "' (type: " + (val != null ? val.getClass().getName() : "null") + ")");
        }
        
        // Note: Column 0 is row number, actual data starts at column 1
        // Column 1 = Channel, Column 2 = Exposure, Column 3 = Interval, Column 4 = Frames
        String exposureStr = (String) firstRow.get(2);
        String intervalStr = (String) firstRow.get(3);
        String framesStr = (String) firstRow.get(4);
        
        print("\nAttempting to parse:");
        print("  Exposure: '" + exposureStr + "'");
        print("  Interval: '" + intervalStr + "'");
        print("  Frames: '" + framesStr + "'");
        
        int exposureMs = 250;
        int frameIntervalMs = 1000;
        int maxFrames = 10000; // Default to large number for continuous acquisition
        
        try {
            exposureMs = Integer.parseInt(exposureStr.trim());
            print("  Parsed exposure: " + exposureMs);
        } catch (Exception e) {
            print("  ERROR parsing exposure: " + e.getMessage());
        }
        
        try {
            frameIntervalMs = Integer.parseInt(intervalStr.trim());
            print("  Parsed interval: " + frameIntervalMs);
        } catch (Exception e) {
            print("  ERROR parsing interval: " + e.getMessage());
        }
        
        try {
            maxFrames = Integer.parseInt(framesStr.trim());
            print("  Parsed frames: " + maxFrames);
        } catch (Exception e) {
            print("  ERROR parsing frames: " + e.getMessage());
        }
        
        print("\nFinal values - Exposure: " + exposureMs + "ms, Interval: " + frameIntervalMs + "ms, Max Frames: " + maxFrames);
        
        // Set exposure from table
        try {
            mmc.setExposure(exposureMs);
            print("Exposure set to " + exposureMs + "ms");
        } catch (Exception e) {
            print("WARNING: Could not set exposure: " + e.getMessage());
        }
        
        int globalFrameNumber = 0;
        long lastGuiUpdateTime = 0;
        final long GUI_UPDATE_INTERVAL_MS = 250;
        
        print("Starting acquisition: " + maxFrames + " frames at " + frameIntervalMs + "ms intervals");
        
        // Simple continuous snapping loop
        while (running[0] && globalFrameNumber < maxFrames) {
            try {
                globalFrameNumber++;
                long frameStartTime = System.currentTimeMillis();
                
                // Snap image with current GUI settings
                List images = mm.live().snap(false);
                
                if (images == null || images.isEmpty()) {
                    print("WARNING: Failed to snap image at frame " + globalFrameNumber);
                    Thread.sleep(1000);
                    continue;
                }
                
                org.micromanager.data.Image image = images.get(0);
                ImageProcessor ip = mm.data().ij().createProcessor(image);
                
                // Save image to disk (always)
                saveImageAsTiff(image, globalFrameNumber, config.experimentFolder);
                
                // Progress indicator every 10 frames
                if (globalFrameNumber % 10 == 0) {
                    print("Frame " + globalFrameNumber + " captured");
                }
                
                long currentTime = System.currentTimeMillis() - startTime;
                boolean shouldUpdateGui = (currentTime - lastGuiUpdateTime) >= GUI_UPDATE_INTERVAL_MS;
                
                // Update live view if enabled and throttled
                if (shouldUpdateGui && config.acqSettings.livePics) {
                    updateLiveView(liveViewPanel, ip, chartsList);
                }
                
                // Measure ALL ROIs and build data row
                ArrayList roiValues = measureROIs(ip);
                ArrayList dataRow = buildDataRow(globalFrameNumber, currentTime, roiValues);
                dataRows.add(dataRow);
                
                // Update graphs (throttled)
                if (shouldUpdateGui) {
                    updateGraphs(datasets, globalFrameNumber, currentTime, roiValues, chartPanels);
                    lastGuiUpdateTime = currentTime;
                }
                
                // Wait for frame interval
                long frameElapsed = System.currentTimeMillis() - frameStartTime;
                long waitTime = frameIntervalMs - frameElapsed;
                if (waitTime > 0) {
                    Thread.sleep(waitTime);
                }
                
            } catch (InterruptedException ie) {
                print("Acquisition interrupted (InterruptedException)");
                break;
            } catch (Exception e) {
                print("ERROR in simple snap loop at frame " + globalFrameNumber + ": " + e.getClass().getName() + ": " + e.getMessage());
                e.printStackTrace();
                print("Continuing to next frame...");
                // Don't break - try to continue
            }
        }
        
        print("\n========== ACQUISITION COMPLETE ==========");
        print("Total frames captured: " + globalFrameNumber);
        print("Total data rows: " + dataRows.size());
        
        // Convert to stack if requested
        if (config.acqSettings.convertToStack) {
            convertTiffsToStack(config.experimentFolder);
        }
        
        return; // Exit after simple mode completes
    }
    
    // ========== ADVANCED MODE: Full Sequence Logic ==========
    print("*** ADVANCED SEQUENCE MODE ***");
    print("Executing " + sequence.size() + " step sequence");
    
    int globalFrameNumber = 0; // Total frame counter across all steps
    int currentStepIndex = 0;  // Current step in sequence (0-based)
    long lastGuiUpdateTime = 0;
    final long GUI_UPDATE_INTERVAL_MS = 250;
    
    print("Starting sequence acquisition...");
    
    // Main acquisition loop with sequence logic
    while (running[0]) {
        try {
            // Get current step
            ArrayList stepRow = (ArrayList) sequence.get(currentStepIndex);
            
            // Debug: print what we got
            print("\nDEBUG: Step row size = " + stepRow.size());
            for (int i = 0; i < stepRow.size(); i++) {
                print("  Column " + i + ": '" + stepRow.get(i) + "'");
            }
            
            // Note: Column 0 is row number, actual data starts at column 1
            // Column 1 = Channel, Column 2 = Exposure, Column 3 = Interval, Column 4 = Frames, Column 5 = Loop Goto
            String channelName = (String) stepRow.get(1);
            String exposureStr = (String) stepRow.get(2);
            String intervalStr = (String) stepRow.get(3);
            String framesStr = (String) stepRow.get(4);
            String loopGotoStr = (String) stepRow.get(5);
            
            // Parse numeric values with error handling
            int exposureMs = 250; // default
            int frameIntervalMs = 1000; // default
            int framesInStep = 1; // default
            
            try {
                exposureMs = Integer.parseInt(exposureStr.trim());
            } catch (Exception e) {
                print("WARNING: Could not parse exposure '" + exposureStr + "', using default " + exposureMs);
            }
            
            try {
                frameIntervalMs = Integer.parseInt(intervalStr.trim());
            } catch (Exception e) {
                print("WARNING: Could not parse interval '" + intervalStr + "', using default " + frameIntervalMs);
            }
            
            try {
                framesInStep = Integer.parseInt(framesStr.trim());
            } catch (Exception e) {
                print("WARNING: Could not parse frames '" + framesStr + "', using default " + framesInStep);
            }
            
            print("\n--- Step " + (currentStepIndex + 1) + ": " + channelName + " ---");
            print("Exposure: " + exposureMs + "ms, Interval: " + frameIntervalMs + "ms, Frames: " + framesInStep);
            
            // Set channel configuration
            if (!channelName.isEmpty()) {
                try {
                    // Find spectral config for this channel
                    for (int i = 0; i < 8; i++) {
                        String specName = (String) config.acqSettings.spectralRows.get(i).get(0);
                        if (specName.equals(channelName)) {
                            // Set camera config
                            mmc.setConfig(config.cameraConfigGroup, config.cameraSnappingConfig);
                            Thread.sleep(50);
                            
                            // Set exposure
                            mmc.setExposure(exposureMs);
                            
                            // Additional channel-specific settings could go here
                            print("Configured for channel: " + channelName + " (" + exposureMs + "ms exposure)");
                            break;
                        }
                    }
                } catch (Exception e) {
                    print("WARNING: Failed to set channel config: " + e.getMessage());
                }
            }
            
            // Capture frames for this step
            for (int frameInStep = 0; frameInStep < framesInStep && running[0]; frameInStep++) {
                globalFrameNumber++;
                long frameStartTime = System.currentTimeMillis();
                
                // Snap image
                List images = mm.live().snap(false);
                if (images == null || images.isEmpty()) {
                    print("WARNING: Failed to snap image at frame " + globalFrameNumber);
                    Thread.sleep(1000);
                    continue;
                }
                
                org.micromanager.data.Image image = images.get(0);
                ImageProcessor ip = mm.data().ij().createProcessor(image);
                
                // Save image to disk (always)
                saveImageAsTiff(image, globalFrameNumber, config.experimentFolder);
                
                long currentTime = System.currentTimeMillis() - startTime;
                boolean shouldUpdateGui = (currentTime - lastGuiUpdateTime) >= GUI_UPDATE_INTERVAL_MS;
                
                // Update live view if enabled and throttled
                if (shouldUpdateGui && config.acqSettings.livePics) {
                    updateLiveView(liveViewPanel, ip, chartsList);
                }
                                
                // Measure ALL ROIs and log them
                ArrayList roiValues = measureROIs(ip);
                for (int roiIdx = 0; roiIdx < roiValues.size(); roiIdx++) {
                    print("ROI" + (roiIdx + 1) + " [Frame " + globalFrameNumber + "]: " + roiValues.get(roiIdx));
                }
                
                // Build data row and store for CSV export
                ArrayList dataRow = buildDataRow(globalFrameNumber, currentTime, roiValues);
                dataRows.add(dataRow);
                
                // Update graphs (throttled)
                if (shouldUpdateGui) {
                    updateGraphs(datasets, globalFrameNumber, currentTime, roiValues, chartPanels);
                    lastGuiUpdateTime = currentTime;
                }
                
                // Wait for frame interval before next snap
                long frameElapsed = System.currentTimeMillis() - frameStartTime;
                long waitTime = frameIntervalMs - frameElapsed;
                if (waitTime > 0) {
                    Thread.sleep(waitTime);
                }
                
            } // End frames in step loop
            
            // Move to next step based on Loop Goto logic
            if (!loopGotoStr.isEmpty()) {
                try {
                    int nextStep = Integer.parseInt(loopGotoStr);
                    if (nextStep >= 1 && nextStep <= sequence.size()) {
                        currentStepIndex = nextStep - 1; // Convert to 0-based index
                        print("Looping to step " + nextStep);
                    } else {
                        print("WARNING: Invalid Loop Goto value: " + loopGotoStr);
                        currentStepIndex++;
                    }
                } catch (NumberFormatException e) {
                    print("WARNING: Could not parse Loop Goto: " + loopGotoStr);
                    currentStepIndex++;
                }
            } else {
                // No loop goto, advance to next step
                currentStepIndex++;
            }
            
            // If we've gone past the last step and no loop, exit
            if (currentStepIndex >= sequence.size()) {
                print("Sequence complete");
                break;
            }
            
        } catch (InterruptedException ie) {
            print("Acquisition interrupted");
            break;
        } catch (Exception e) {
            print("ERROR in acquisition loop: " + e.getMessage());
            e.printStackTrace();
            break;
        }
    }
    
    print("\n========== ACQUISITION COMPLETE ==========");
    print("Total frames captured: " + globalFrameNumber);
    print("Total data rows: " + dataRows.size());
    
    // Convert to stack if requested
    if (config.acqSettings.convertToStack) {
        convertTiffsToStack(config.experimentFolder);
    }
}

// ==================== CSV Export for Graph Data ====================
void exportGraphDataToCSV(ArrayList dataRows, int numActiveGraphs, ArrayList visualizationRows) {
    if (dataRows.isEmpty()) {
        print("No data to export");
        return;
    }
    
    // Use experiment folder instead of root data directory
    File experimentFolder = new File(config.experimentFolder);
    if (!experimentFolder.exists()) {
        print("ERROR: Experiment folder not found");
        return;
    }
    
    // Determine how many ROIs we have from the first data row
    int numROIs = ((ArrayList) dataRows.get(0)).size() - 2; // Subtract frame and timestamp columns
    
    // Create one CSV file per active graph
    for (int graphIdx = 0; graphIdx < 4; graphIdx++) {
        ArrayList vizRow = (ArrayList) visualizationRows.get(graphIdx);
        String graphType = (String) vizRow.get(1);
        
        if (graphType.equals("none")) {
            continue;
        }
        
        // Build descriptive filename
        String frameLogic = "";
        Boolean everyFrame = (Boolean) vizRow.get(2);
        Boolean everyOdd = (Boolean) vizRow.get(3);
        Boolean everyEven = (Boolean) vizRow.get(4);
        String custom = (String) vizRow.get(5);
        
        if (everyFrame != null && everyFrame.booleanValue()) {
            frameLogic = "every";
        } else if (everyOdd != null && everyOdd.booleanValue()) {
            frameLogic = "odd";
        } else if (everyEven != null && everyEven.booleanValue()) {
            frameLogic = "even";
        } else if (custom != null && !custom.equals("Off")) {
            frameLogic = custom.replace(" ", "_");
        }
        
        String fileName = "Graph" + (graphIdx + 1) + "_" + graphType.replace(" ", "_").replace("/", "-") + "_" + frameLogic + ".csv";
        File csvFile = new File(experimentFolder, fileName);
        
        try {
            PrintWriter writer = new PrintWriter(new FileWriter(csvFile));
            
            // Determine actual number of ROIs from stored ROIs
            int actualNumROIs = config.storedROIs != null ? config.storedROIs.size() : 0;
            
            // Handle Frame Ratio graphs differently
            if (graphType.startsWith("Frame ratio")) {
                // Header for ratio data
                writer.print("Frame Pair,Timestamp [ms]");
                for (int roiIdx = 0; roiIdx < actualNumROIs; roiIdx++) {
                    writer.print(",ROI" + (roiIdx + 1) + "_Ratio");
                }
                writer.println();
                
                // Collect frames into even/odd pairs and calculate ratios
                Map evenFrames = new HashMap(); // frameNumber -> row
                Map oddFrames = new HashMap();  // frameNumber -> row
                
                // Separate even and odd frames
                for (int i = 0; i < dataRows.size(); i++) {
                    ArrayList row = (ArrayList) dataRows.get(i);
                    int frameNum = ((Integer) row.get(0)).intValue();
                    
                    if (shouldProcessFrame(frameNum, vizRow)) {
                        if (frameNum % 2 == 0) {
                            evenFrames.put(frameNum, row);
                        } else {
                            oddFrames.put(frameNum, row);
                        }
                    }
                }
                
                // Find consecutive pairs and calculate ratios
                // Assuming frames come in sequence: 0,1,2,3,4,5...
                // We pair (0,1), (2,3), (4,5), etc.
                for (int i = 0; i < dataRows.size(); i++) {
                    ArrayList row = (ArrayList) dataRows.get(i);
                    int frameNum = ((Integer) row.get(0)).intValue();
                    
                    // Process when we have an even frame (pair with next odd)
                    if (frameNum % 2 == 0) {
                        ArrayList evenRow = (ArrayList) evenFrames.get(frameNum);
                        ArrayList oddRow = (ArrayList) oddFrames.get(frameNum + 1);
                        
                        if (evenRow != null && oddRow != null) {
                            // Extract ROI values
                            ArrayList evenROIs = new ArrayList();
                            ArrayList oddROIs = new ArrayList();
                            
                            for (int roiIdx = 0; roiIdx < actualNumROIs; roiIdx++) {
                                evenROIs.add(evenRow.get(2 + roiIdx));
                                oddROIs.add(oddRow.get(2 + roiIdx));
                            }
                            
                            // Calculate ratios based on type
                            ArrayList ratios = null;
                            if (graphType.equals("Frame ratio Even/Odd")) {
                                ratios = calculateFrameRatio(evenROIs, oddROIs);
                            } else if (graphType.equals("Frame ratio Odd/Even")) {
                                ratios = calculateFrameRatio(oddROIs, evenROIs);
                            }
                            
                            if (ratios != null && !ratios.isEmpty()) {
                                // Write pair identifier (e.g., "0-1" for frames 0 and 1)
                                writer.print(frameNum + "-" + (frameNum + 1));
                                writer.print(",");
                                // Use timestamp from the second frame (odd frame)
                                writer.print(oddRow.get(1));
                                
                                // Write ratio values
                                for (int roiIdx = 0; roiIdx < ratios.size(); roiIdx++) {
                                    writer.print(",");
                                    Object ratioVal = ratios.get(roiIdx);
                                    if (ratioVal != null) {
                                        double ratio = ((Double) ratioVal).doubleValue();
                                        if (!Double.isNaN(ratio) && !Double.isInfinite(ratio)) {
                                            writer.print(ratio);
                                        } else {
                                            writer.print("NaN");
                                        }
                                    }
                                }
                                writer.println();
                            }
                        }
                    }
                }
                
            } else {
                // Standard intensity data export
                // Header with ROI columns (only actual ROIs)
                writer.print("Frame,Timestamp [ms]");
                for (int roiIdx = 0; roiIdx < actualNumROIs; roiIdx++) {
                    writer.print(",ROI" + (roiIdx + 1));
                }
                writer.println();
                
                // Write data rows - only include rows that pass this graph's frame filter
                for (int i = 0; i < dataRows.size(); i++) {
                    ArrayList row = (ArrayList) dataRows.get(i);
                    
                    // row structure: [frame, timestamp, roi0, roi1, roi2, roi3]
                    int frameNum = ((Integer) row.get(0)).intValue();
                    
                    // Check if this frame passes the graph's filter
                    if (shouldProcessFrame(frameNum, vizRow)) {
                        writer.print(row.get(0)); // Frame
                        writer.print(",");
                        writer.print(row.get(1)); // Timestamp
                        
                        // Write only actual ROI values
                        for (int roiIdx = 0; roiIdx < actualNumROIs; roiIdx++) {
                            writer.print(",");
                            Object roiValue = row.get(2 + roiIdx);
                            if (roiValue != null) {
                                writer.print(roiValue);
                            }
                        }
                        writer.println();
                    }
                }
            }
            
            writer.close();
            print("Graph " + (graphIdx + 1) + " data exported to: " + csvFile.getName());
            
        } catch (IOException e) {
            print("ERROR: Failed to export graph " + (graphIdx + 1) + " data: " + e.getMessage());
            e.printStackTrace();
        }
    }
}

// Export event times to CSV
void exportEventTimesToCSV(ArrayList eventTimes) {
    if (eventTimes.isEmpty()) {
        print("No events recorded");
        return;
    }
    
    String experimentFolder = config.experimentFolder;
    if (experimentFolder.isEmpty()) {
        print("ERROR: No experiment folder set");
        return;
    }
    
    File csvFile = new File(experimentFolder, "Event-Data.csv");
    
    try {
        PrintWriter writer = new PrintWriter(new FileWriter(csvFile));
        
        // Header
        writer.println("Event,Time [ms]");
        
        // Write each event
        for (int i = 0; i < eventTimes.size(); i++) {
            writer.print("Event " + (i + 1));
            writer.print(",");
            writer.println(eventTimes.get(i));
        }
        
        writer.close();
        print("Event data exported to: " + csvFile.getName());
        
    } catch (IOException e) {
        print("ERROR: Failed to export event data: " + e.getMessage());
        e.printStackTrace();
    }
}

print("GUI Test loaded. Close the window to exit.");
